PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u'01', u'credits_per_rnf': u'0.25', u'schedule': u'RI', u'interval': u'5', u'session': u'2', u'experimenter': u'o'}
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  Full-screen window = False
  expName = habits_2
  Screen = 1
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Routines
  Routine choice_test
    PolygonComponent circle_resp_choice
      opacity [set every frame] = 0
      fillColor = $[1.000,0.004,-1.000]
      stopVal [duration (s)] = $duration
      lineWidth = 2
      lineColor = $[1.000,0.004,-1.000]
      startVal [time (s)] = 0.0
      nVertices = 3
      size = (0.2, 0.2)
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    KeyboardComponent key_resp_4
      stopVal [duration (s)] = $duration
      forceEndRoutine = True
      allowedKeys = 'up', 'down', 'left', 'right', 'escape'
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent stim_choice1
      stopVal [duration (s)] = $duration
      pos [set every repeat] = $position1
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus_choice1
      size = (0.3, 0.3)
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    ImageComponent stim_choice_2
      stopVal [duration (s)] = $duration
      pos [set every repeat] = $position2
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus_choice2
      size = (0.3, 0.3)
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    CodeComponent code_3
      Begin Routine:
        #### BEGIN ROUTINE SNIPPET FOR CHOICE TEST ####
        phase = "choice"

        shouldBeReinforced = 0 # just in case not running the training stage for debugging purposes
        tickClock = core.CountdownTimer(1) # same reason as line above

        if expInfo['session'] == 1: # set rep of choice trial to zero if in first session (no devaluation yet)
            trials_2.nReps = 0

        shouldBeReinforced_1, shouldBeReinforced_2 = 0, 0 # set rnf flag for two options

        tickClock1, tickClock2 = core.CountdownTimer(1), core.CountdownTimer(1) # this is to tick every second for reward availability

        #### END BEGIN ROUTINE SNIPPET FOR CHOICE TEST ####
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        #if debugging:
        #    show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if not shouldBeReinforced and tickClock.getTime() <= 0:
                shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["interval"]))
                tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_4.keys = "up"
                key_resp_4.rt = str(globalClock.getTime())
                resp_made()
            elif joy_y == 1:
                key_resp_4.keys = "down"
                key_resp_4.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == -1:
                key_resp_4.keys = "left"
                key_resp_4.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == 1:
                key_resp_4.keys = "right"
                key_resp_4.rt = str(globalClock.getTime())
                resp_made()


        #### END EACH FRAME SNIPPET ####
    ImageComponent curtain_img
      stopVal [duration (s)] = $duration
      startVal [time (s)] = 0.0
      image = stim/curtain.jpg
      size = (0.2, 0.2)
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  Routine instr_test_2
    TextComponent instr_test_txt_2
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        One of the piggy banks is now full.

        Please call the experimenter.
    KeyboardComponent key_resp_instr1_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_test
    TextComponent instr_devaluation_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        The following piggy bank:





        is now full. No further coins can be deposited in this piggy bank.
    TextComponent devalued_piggy_bank_txt
      color = black
      text [set every repeat] = $devalued_coin
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.25
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
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  Routine instr_before_consumption_test
    TextComponent instr_devaluation_txt_3
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        On the next screen you will have the chance to collect gold and silver coins by clicking the mouse on them.

        We will deposit the collected coins into their respective piggy banks.

        You will have 8 secs to collect as much as you want from each type of coin.
    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr1_1
    TextComponent instr1_1_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        During each trial, you will be allowed to perform one of four actions with the joystick: move left, move right, push and pull.

        Each allowed movement comes at a cost of 0.01 dollars.

        You will know which action is the correct one by a stimulus that will appear on the screen. An incorrect action will have no effect.

        The following screens will present the stimuli and the correct action you need to take when you see each stimulus.









        (Press any key to continue)
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instr1
    TextComponent instr_test_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        In this experiment you will be using your joystick to earn either gold or silver coins.

        The coins will be cashed for real money at the end of the experiment.

        Each coin you win, either silver or gold, will give you 0.25 dollars. Therefore, both silver and gold coins are worth the same amount.










        (Press any key to continue)
    KeyboardComponent key_resp_instr1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2_3
    TextComponent instr2_3_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Every time you perform the action that corresponds to the stimulus shown on the screen, a triangle will appear at the center of the screen signalling that the relevant response has been made.

        You may receive a reward (silver or gold coin) for performing the action which corresponds to the stimulus shown on the screen.

        Two of the actions (for ex., left and right) will give you gold coins when you are rewarded; the other two (for ex., up and down) will give you silver coins when you are rewarded.

        We will be collecting the silver and gold coins you win in two piggy banks outside the room, one for the silver coins and one for the gold coins.

        Remember: both gold and silver coins are worth the same: 0.25 dollars.









        (Press any key to continue)
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_stim4
    TextComponent instr_stim4_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Here is another one of the stimuli you will see.

        This cube has a button on the right side, so the correct response is to push the button by moving the joystick to the left, as shown in the picture to the right of the cube. Feel free to try it!










        (Press any key to continue)
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent resp_left_image
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/left_resp_img.png
      size = (0.35, 0.35)
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    ImageComponent joy_left_img
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/joy_img_left.jpg
      size = (0.35, 0.35)
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  Routine instr2
    TextComponent instr2_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    KeyboardComponent key_resp_instr2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instr2_img1
      startVal [time (s)] = 0.0
      image [set every repeat] = $instr_img
      size = (0.5, 0.5)
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  Routine instr2_2
  Routine instr_stim1
    TextComponent instr_stim1_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Below is one of the stimuli you will see.

        This stimuli is a cube that has a button on the left side, so the correct response is to push the button by moving the joystick to the right, as shown in the picture to the right of the cube.

        Feel free to try it!










        (Press any key to continue)
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent resp_right_img
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/right_resp_img.png
      size = (0.35, 0.35)
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    ImageComponent joy_right_img
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/joy_img_right.jpg
      size = (0.35, 0.35)
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  Routine instr_stim3
    TextComponent instr_stim3_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Here is another one of the stimuli you will see.

        This cube has a button on the front, so the correct response is to push the button by pushing the joystick away from you, as shown in the picture to the right of the cube. Feel free to try it!












        (Press any key to continue)
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent resp_up_img
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/up_resp_img.png
      size = (0.35, 0.35)
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    ImageComponent joy_up_img
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/joy_img_up.jpg
      size = (0.35, 0.35)
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  Routine instr_stim2
    TextComponent instr_stim2_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Here is another one of the stimuli you will see.

        This cube has a button on the top, so the correct response is to push the button by pulling the joystick towards you, as shown in the picture to the right of the cube. Feel free to try it!










        (Press any key to continue)
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent resp_down_img
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/down_resp_img.png
      size = (0.35, 0.35)
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    ImageComponent joy_down_img
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/joy_img_down.jpg
      size = (0.35, 0.35)
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  Routine consumption_test1
    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = 7
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = never
    ImageComponent gold1
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent gold2
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent gold3
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.15, 0.6)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent gold4
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (-0.8, 0.1)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent gold5
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent gold6
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (-0.26, 0.6)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent gold7
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (-0.6, 0.6)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent gold8
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.4, -0.75)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent gold9
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (-0.35, 0.8)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent gold10
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (-0.9, 0.9)
      startVal [time (s)] = 0.0
      image = stim/gold_coin.png
      size = (0.2, 0.2)
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    ImageComponent silver1
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.12, 0)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22, 0.22)
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    ImageComponent silver2
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.2, 0.28)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22, 0.22)
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    ImageComponent silver3
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.26, -0.2)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22,0.22)
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    ImageComponent silver4
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (-0.2, -0.6)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22,0.22)
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    ImageComponent silver5
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22, 0.22)
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    ImageComponent silver6
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.1, -0.9)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22,0.22)
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    ImageComponent silver7
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.28, -0.7)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22,0.22)
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    ImageComponent silver8
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.1, -0.7)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22,0.22)
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    ImageComponent silver9
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.85, -0.85)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22,0.22)
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    ImageComponent silver10
      opacity [set every frame] = 1
      stopVal [duration (s)] = 7
      pos = (0.6, 0.75)
      startVal [time (s)] = 0.0
      image = stim/silver_coin.png
      size = (0.22,0.22)
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    CodeComponent code_6
      Begin Routine:
        # initialise whether coins have been collected or not

        # initialise "collected" flag for gold coins
        gold1_collected = 0
        gold2_collected = 0
        gold3_collected = 0
        gold4_collected = 0
        gold5_collected = 0
        gold6_collected = 0
        gold7_collected = 0
        gold8_collected = 0
        gold9_collected = 0
        gold10_collected = 0

        # initialise "collected" flag for silver coins
        silver1_collected = 0
        silver2_collected = 0
        silver3_collected = 0
        silver4_collected = 0
        silver5_collected = 0
        silver6_collected = 0
        silver7_collected = 0
        silver8_collected = 0
        silver9_collected = 0
        silver10_collected = 0

        # initialise number of collected coins of each type
        nGold, nSilver = 0, 0
      End Routine:
        thisExp.addData('nGold', nGold)
        thisExp.addData('nSilver', nSilver)
        thisExp.nextEntry()
      Each Frame:
        # if mouse is pressed in one coin, make it disappear and increase nGold or nSilver

        # gold

        if not gold1_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold1):
                gold1_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold1_collected:
            gold1.setOpacity(0) # hide the stim

        if not gold2_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold2):
                gold2_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold2_collected:
            gold2.setOpacity(0) # hide the stim

        if not gold3_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold3):
                gold3_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold3_collected:
            gold3.setOpacity(0) # hide the stim

        if not gold4_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold4):
                gold4_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold4_collected:
            gold4.setOpacity(0) # hide the stim

        if not gold5_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold5):
                gold5_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold5_collected:
            gold5.setOpacity(0) # hide the stim

        if not gold6_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold6):
                gold6_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold6_collected:
            gold6.setOpacity(0) # hide the stim

        if not gold7_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold7):
                gold7_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold7_collected:
            gold7.setOpacity(0) # hide the stim

        if not gold8_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold8):
                gold8_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold8_collected:
            gold8.setOpacity(0) # hide the stim

        if not gold9_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold9):
                gold9_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold9_collected:
            gold9.setOpacity(0) # hide the stim

        if not gold10_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold10):
                gold10_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold10_collected:
            gold10.setOpacity(0) # hide the stim

        # silver coins

        if not silver1_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver1):
                silver1_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver1_collected:
            silver1.setOpacity(0) # hide the stim

        if not silver2_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver2):
                silver2_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver2_collected:
            silver2.setOpacity(0) # hide the stim

        if not silver3_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver3):
                silver3_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver3_collected:
            silver3.setOpacity(0) # hide the stim

        if not silver4_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver4):
                silver4_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver4_collected:
            silver4.setOpacity(0) # hide the stim

        if not silver5_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver5):
                silver5_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver5_collected:
            silver5.setOpacity(0) # hide the stim

        if not silver6_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver6):
                silver6_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver6_collected:
            silver6.setOpacity(0) # hide the stim

        if not silver7_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver7):
                silver7_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver7_collected:
            silver7.setOpacity(0) # hide the stim

        if not silver8_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver8):
                silver8_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver8_collected:
            silver8.setOpacity(0) # hide the stim

        if not silver9_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver9):
                silver9_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver9_collected:
            silver9.setOpacity(0) # hide the stim

        if not silver10_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver10):
                silver10_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver10_collected:
            silver10.setOpacity(0) # hide the stim
  Routine shouldRun_2
    CodeComponent code_5
      Begin Routine:
        # This snippet checks whether session number is 1 or 2
        # If it is 1, it does not present the devaluation phase
        # (the devaluation is done at the end of the 2nd day)

        if expInfo['session'] == '2':
            print("session 2")
            nRepsChoice = 1
        elif expInfo['session'] == '1':
            nRepsChoice = 0
            print("session 1")
        else:
            print("something diff from 1 or 2 for session number; weird!")
  Routine shouldRun
    CodeComponent code_4
      Begin Routine:
        if expInfo['session']==1:
            n
  Routine choice
    PolygonComponent circle_resp_2
      opacity [set every frame] = 0
      fillColor = $[1.000,0.004,-1.000]
      stopVal [duration (s)] = 0
      lineWidth = 2
      lineColor = $[1.000,0.004,-1.000]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.2, 0.2)
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    ImageComponent stim_2
      stopVal [duration (s)] = 0
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      image [set every repeat] = $machine
      size = (0.5, 0.5)
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    TextComponent credits_txt_2
      color = black
      text = credits: 
      stopVal [duration (s)] = 0
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent number_of_credits_txt_2
      color = red
      text [set every frame] = $credits
      stopVal [duration (s)] = 0
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    KeyboardComponent key_resp_3
      correctAns = $corrAns
      stopVal [duration (s)] = 0
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'left'
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_2
    ImageComponent coin_2
      opacity [set every frame] = 0
      stopVal [duration (s)] = 0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      image [set every repeat] = $coin_img
      size = (0.25, 0.25)
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  Routine instr_choice_test
    TextComponent instr_devaluation_txt_2
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        In this last part of the experiment you will have the opportunity to perform two actions during a trial.

        The allowed actions will be signalled by their respective stimuli.

        For example, if you see the stimuli below you will be allowed to make left and up responses.








        This time we will not show you the coins you are earning, the flashing triangle, nor the credits you have so far. But keep in mind that everything continues the same as before. We will keep inserting the coins you win in their respective piggy banks.
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent resp1_img_example
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      image = stim/left_resp_img.png
      size = (0.3, 0.3)
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    ImageComponent resp2_img_example
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      image = stim/up_resp_img.png
      size = (0.3, 0.3)
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  Routine instr_2_4
    TextComponent instr_2_4_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Given the nature of the task, not every correct joystick action you make during each trial will be rewarded.

        In fact, there is a best way to perform the correct joystick action in order to win the most rewards with the least cost. But you need to discover this yourself!










        Please call the experimenter now to start the experiment.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine training
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = $duration
      forceEndRoutine = True
      allowedKeys = 'up', 'down', 'left', 'right', 'escape'
      startVal [time (s)] = 0.0
      store = all keys
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    PolygonComponent circle_resp
      opacity [set every frame] = 0
      fillColor = $[1.000,0.004,-1.000]
      stopVal [duration (s)] = $duration
      pos = (0, 0.9)
      lineWidth = 2
      lineColor = $[1.000,0.004,-1.000]
      startVal [time (s)] = 0.0
      nVertices = 3
      size = (0.2, 0.2)
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    ImageComponent stim
      stopVal [duration (s)] = $duration
      pos [set every repeat] = $position
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus
      size = (0.3, 0.3)
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    ImageComponent stim_pressed
      opacity [set every frame] = 0
      stopVal [duration (s)] = $duration
      pos [set every repeat] = $position
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus_pressed
      size = (0.3, 0.3)
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    CodeComponent code
      Begin Experiment:
        #### BEGIN EXPERIMENT SNIPPET ####

        # Import joystick libraries
        from psychopy.hardware import joystick
        from psychopy import visual

        joystick.backend='pyglet'  # must match the Window created

        nJoys = joystick.getNumJoysticks()  # to check if we have any joysticks connected
        id = 0
        joy = joystick.Joystick(id)  # id must be <= nJoys - 1

        # Load sounds
        coin_sound = sound.Sound('sounds/coin.wav')
        reward_sound = sound.Sound('sounds/reward2.wav')

        # Create a csv file to save response times etc. Previous one is the native Psychopy file.
        #file_name = 'data/S%s_session%s_%s_dev%s' %(expInfo['participant'], expInfo['session'], expInfo['date'], expInfo['devalued'])
        #csv_file = open(file_name+'.csv', 'wb')
        #writer_object = csv.writer(csv_file, delimiter=",") # create object to write in

        #writer_object.writerow(['resp', 't', 'participant', 'trial', 'session'])

        # Initialise some variables

        # Should we show the debugging msgs on screen?
        # In the present experiment, this means showing the credits on the screen
        debugging = True

        # Initialise credits
        credits = 20

        nReinforcers = 0

        # create array to save last two frames for joystick position
        joy_posx_array, joy_posy_array = [], []
        window = 2 # maximum length of array (2 if you want the joy pos for 2 frames, for ex)

        # Create some text box objects for debugging purposes
        num_credits_txt = visual.TextBox(window=win, text=' ', font_size=50,
                                 font_color=[-1, -1, 1], size=(1.9, .3), pos=(0.7, -0.95),
                                 grid_horz_justification='center', units='norm')

        joy_pos_array_txt = visual.TextBox(window=win, text='', font_size=20,
                                 font_color=[1, 1, 1], size=(1.9, .3), pos=(-0.7, 0.5),
                                 grid_horz_justification='center', units='norm')

        credits_title_txt = visual.TextBox(window=win, text='Credits', font_size=80,
                                 font_color=[1,1,1], size=(1.9, .3), pos=(0.7, -0.8),
                                 grid_horz_justification='center', units='norm')

        def show_debugging_stuff():
            ''' set text for stims to show every frame '''
            #shouldBeReinforced_txt.setText('Reinforce?: %d' %shouldBeReinforced)
            #joy_pos_array_txt.setText("joy_resp_array: \n" + str(joy_pos_array))
            num_credits_txt.setText(str(credits))
            # Draw stim on screen
            #shouldBeReinforced_txt.draw()
            #joy_pos_array_txt.draw()
            credits_title_txt.draw()
            num_credits_txt.draw()

        def checkRnf():
            ''' Once a response has been recorded -resp_made()-,
            this function checks whether it is reinforced
            and gives the reward if shouldBeReinforced flag is True '''
            global credits, shouldBeReinforced, nReinforcers # globals because these are used outside

            if shouldBeReinforced:
                nReinforcers += 1
                credits += float(expInfo['credits_per_rnf'])
                reward_sound.play()
                for frameN in range(40): # show for bit more than half a sec (60 frames = 1 sec)
                    #reward_txt.draw()
                    circle_resp.setOpacity(0)
                    coin.setOpacity(1)
                    win.flip()
            trials.addData("wasRnf", shouldBeReinforced)
            #thisExp.nextEntry()

            shouldBeReinforced = 0 # reset shouldBeReinforced flag

        def resp_made():
            global credits # credits var updates troughout the experiment
            ''' after a resp is made, save it in the csv file and show circle '''
            if phase == "training":
                if key_resp_2.keys in ["left", "right"]: # this updates the 2-element array with joy_x pos
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_x)
                    # save data in csv
                    #trials.addData("response", key_resp_2.keys)
                    #trials.addData("t", str(globalClock.getTime()))
                    #trials.addData("devalued", expInfo['devalued'])

                elif key_resp_2.keys in ["up", "down"]: # this updates the 2-element array with joy_y pos
                    joy_posx_array.pop(0)
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_y)
                    #trials.addData("response", key_resp_2.keys)
                    #trials.addData("t", str(globalClock.getTime()))
                    #trials.addData("devalued", expInfo['devalued'])

            elif phase == "choice":
                if key_resp_4.keys in ["left", "right"]: # this updates the 2-element array with joy_x pos
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_x)
                    # save data in csv
                    trials.addData("key_resp_4.keys", key_resp_4.keys)
                    trials.addData("key_resp_4.rt", str(globalClock.getTime()))
                    #trials.addData("devalued", expInfo['devalued'])

                elif key_resp_4.keys in ["up", "down"]: # this updates the 2-element array with joy_y pos
                    joy_posx_array.pop(0)
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_y)
                    trials.addData("key_resp_4.keys", key_resp_4.keys)
                    trials.addData("key_resp_4.rt", str(globalClock.getTime()))
                    #trials.addData("devalued", expInfo['devalued'])
                thisExp.nextEntry()

            if phase == "training":
                if key_resp_2.keys in [corrResp]:
                    credits -= 1
                    coin_sound.play()
                    #print("correct resp")
                    for nframes in range(3):
                        circle_resp.setOpacity(1)
                        #stim_pressed.setOpacity(1)
                    #'resp', 't', 'participant', 'session', 'trial',
                    #writer_object.writerow([key_resp_2.keys, str(globalClock.getTime()), expInfo['participant'], expInfo['session'], str(trials.thisN)])
                    checkRnf() # call checkRnf function to see whether it's reinforced
            elif phase == "choice":
                if key_resp_4.keys in [corrResp1, corrResp2]:
                    #credits -= 1
                    coin_sound.play()
                    #print("correct resp")
                    for nframes in range(3):
                        circle_resp_choice.setOpacity(1)
                        #stim_pressed.setOpacity(1)
                    #checkRnf()

        #### END BEGIN EXPERIMENT SNIPPET ####
      Begin Routine:
        #### BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####

        # Initialise parameters at the beginning of each block (routine)
        phase = "training"

        shouldBeReinforced = 0 # flag to set next reinforcer for RI schedule

        tickClock = core.CountdownTimer(1) # this is to tick every second for reward availability in the RI schedule

        #print(expInfo['session'])

        #### FINISH BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####
      End Routine:
        #### END ROUTINE SNIPPET FOR TRAINING ROUTINE ####



        #### FINISH END ROUTINE SNIPPET FOR TRAINING ROUTINE ####
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        if debugging:
            show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if not shouldBeReinforced and tickClock.getTime() <= 0:
                shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["interval"]))
                tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_2.keys = "up"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            elif joy_y == 1:
                key_resp_2.keys = "down"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == -1:
                key_resp_2.keys = "left"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == 1:
                key_resp_2.keys = "right"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            #resp_made() # a response has been recorded; run the functions associated with a response

        #### END EACH FRAME SNIPPET ####
    ImageComponent coin
      opacity [set every frame] = 0
      stopVal [duration (s)] = $duration
      startVal [time (s)] = 0.0
      image [set every repeat] = $coin_img
      size = (0.2, 0.2)
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  Routine goodbye
    TextComponent final_txt_1
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        End of the experiment. Thanks for participating!

        Your total earning for today was
    TextComponent credits_txt
      color = yellow
      text [set every repeat] = str($(credits/100)) + ' dollars'
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.25
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions2.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'corrResp': u'down', 'cond_val': u'deval', 'devalued_coin': u'silver', 'duration': 1, 'aux1': u'd', 'corrResp1': None, 'outcome_choice2': None, 'corrResp2': None, 'position2': None, 'position1': None, 'stimulus_choice2': None, 'stimulus_choice1': None, 'coin_img': u'stim/silver_coin.png', 'phase': u'training', 'stimulus_pressed': u'stim/left_resp_img_pressed.png', 'condition': u'under1', 'condition_choice': None, 'stimulus': u'stim/down_resp_img.png', 'outcome_choice1': None, 'cond_val1': None, 'cond_val2': None, 'rand_num': 0.66086187222612969, 'position': [0, 0.5], 'outcome': u'silver', 's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,
      {'corrResp': u'left', 'cond_val': u'val', 'devalued_coin': u'silver', 'duration': 1, 'aux1': u'l', 'corrResp1': None, 'outcome_choice2': None, 'corrResp2': None, 'position2': None, 'position1': None, 'stimulus_choice2': None, 'stimulus_choice1': None, 'coin_img': u'stim/gold_coin.png', 'phase': u'training', 'stimulus_pressed': u'stim/right_resp_img_pressed.png', 'condition': u'under2', 'condition_choice': None, 'stimulus': u'stim/left_resp_img.png', 'outcome_choice1': None, 'cond_val1': None, 'cond_val2': None, 'rand_num': 0.62830209203540943, 'position': [0.5, 0], 'outcome': u'gold', 'stimulu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,
      {'corrResp': u'right', 'cond_val': u'val', 'devalued_coin': u'silver', 'duration': 1, 'aux1': u'r', 'corrResp1': None, 'outcome_choice2': None, 'corrResp2': None, 'position2': None, 'position1': None, 'stimulus_choice2': None, 'stimulus_choice1': None, 'coin_img': u'stim/gold_coin.png', 'phase': u'training', 'stimulus_pressed': u'stim/down_resp_img_pressed.png', 'condition': u'over1', 'condition_choice': None, 'stimulus': u'stim/right_resp_img.png', 'outcome_choice1': None, 'cond_val1': None, 'cond_val2': None, 'rand_num': 0.29514184911147912, 'position': [-0.5, 0], 'outcome': u'gold', 'stimul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,
      {'corrResp': u'up', 'cond_val': u'deval', 'devalued_coin': u'silver', 'duration': 1, 'aux1': u'u', 'corrResp1': None, 'outcome_choice2': None, 'corrResp2': None, 'position2': None, 'position1': None, 'stimulus_choice2': None, 'stimulus_choice1': None, 'coin_img': u'stim/silver_coin.png', 'phase': u'training', 'stimulus_pressed': u'stim/up_resp_img_pressed.png', 'condition': u'over2', 'condition_choice': None, 'stimulus': u'stim/up_resp_img.png', 'outcome_choice1': None, 'cond_val1': None, 'cond_val2': None, 'rand_num': 0.37080965395198506, 'position': [0, -0.5], 'outcome': u'silver', 'stimulus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
    Routine instr1
    Routine instr1_1
    Routine instr_stim1
    Routine instr_stim2
    Routine instr_stim3
    Routine instr_stim4
    Routine instr2_3
    Routine instr_2_4
  LoopTerminator trials_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions2.xlsx
    loopType = random
    nReps = 1
    Selected rows = 0:10
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    conditions:
      [{'corrResp': u'up', 'cond_val': u'deval', 'devalued_coin': u'silver', 'duration': 5, 'aux1': u'u', 'corrResp1': None, 'outcome_choice2': None, 'corrResp2': None, 'position2': None, 'position1': None, 'stimulus_choice2': None, 'stimulus_choice1': None, 'coin_img': u'stim/silver_coin.png', 'phase': u'training', 'stimulus_pressed': u'stim/left_resp_img_pressed.png', 'condition': u'under1', 'condition_choice': None, 'stimulus': u'stim/up_resp_img.png', 'outcome_choice1': None, 'cond_val1': None, 'cond_val2': None, 'rand_num': 0.9038830621179393, 'position': [0, -0.5], 'outcome': u'silver', 'stimu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,
      {'corrResp': u'right', 'cond_val': u'val', 'devalued_coin': u'silver', 'duration': 5, 'aux1': u'r', 'corrResp1': None, 'outcome_choice2': None, 'corrResp2': None, 'position2': None, 'position1': None, 'stimulus_choice2': None, 'stimulus_choice1': None, 'coin_img': u'stim/gold_coin.png', 'phase': u'training', 'stimulus_pressed': u'stim/right_resp_img_pressed.png', 'condition': u'under2', 'condition_choice': None, 'stimulus': u'stim/right_resp_img.png', 'outcome_choice1': None, 'cond_val1': None, 'cond_val2': None, 'rand_num': 0.15548909945580502, 'position': [-0.5, 0], 'outcome': u'gold', 'stim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,
      {'corrResp': u'left', 'cond_val': u'val', 'devalued_coin': u'silver', 'duration': 5, 'aux1': u'l', 'corrResp1': None, 'outcome_choice2': None, 'corrResp2': None, 'position2': None, 'position1': None, 'stimulus_choice2': None, 'stimulus_choice1': None, 'coin_img': u'stim/gold_coin.png', 'phase': u'training', 'stimulus_pressed': u'stim/down_resp_img_pressed.png', 'condition': u'over1', 'condition_choice': None, 'stimulus': u'stim/left_resp_img.png', 'outcome_choice1': None, 'cond_val1': None, 'cond_val2': None, 'rand_num': 0.9478652469960341, 'position': [0.5, 0], 'outcome': u'gold', 'stimulus_p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,
      {'corrResp': u'down', 'cond_val': u'deval', 'devalued_coin': u'silver', 'duration': 5, 'aux1': u'd', 'corrResp1': None, 'outcome_choice2': None, 'corrResp2': None, 'position2': None, 'position1': None, 'stimulus_choice2': None, 'stimulus_choice1': None, 'coin_img': u'stim/silver_coin.png', 'phase': u'training', 'stimulus_pressed': u'stim/up_resp_img_pressed.png', 'condition': u'over2', 'condition_choice': None, 'stimulus': u'stim/down_resp_img.png', 'outcome_choice1': None, 'cond_val1': None, 'cond_val2': None, 'rand_num': 0.44671983676540006, 'position': [0, 0.5], 'outcome': u'silver', 'stimu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
    Routine training
  LoopTerminator trials
  Routine shouldRun_2
  LoopInitiator choice_block loopType="TrialHandler"
    conditionsFile = runBlock.xlsx
    isTrials = False
    loopType = random
    nReps = $nRepsChoice
    conditions = [{'nRepsChoice': 1}]
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    Routine instr_test
    Routine instr_before_consumption_test
    Routine consumption_test1
    Routine instr_choice_test
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = conditions2.xlsx
      loopType = random
      nReps = 1
      Selected rows = 10:12
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      conditions:
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      Routine choice_test
    LoopTerminator trials_2
  LoopTerminator choice_block
  Routine goodbye
