PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {u'group': u'under', u'credits_per_rnf': u'40', u'schedule': u'RR', u'age': u'26', u'participant': u'143', u'session': u'2', u'cost_response': u'1', u'et': u'a', u'h_m': u'm', u'parameter': u'15'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = $[0.506,0.506,0.506]
  expName = habits_v8
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Routines
  Routine contingency_test
    TextComponent contingency_test_instr
      color = black
      font = Comic Sans
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please indicate which coin was associated with the stimuli below.

        Press "g" for gold or "s" for silver.
    KeyboardComponent key_resp_ct
      allowedKeys = 'left', 'right', 'a'
      correctAns = $corrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    ImageComponent stim_contingency_test
      image [set every repeat] = $stimulus
      pos = (0, -0.6)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent coin_img_test
      image [set every repeat] = $coin_img
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        responseMade = False # whether a response has been made; use to finish the routine

        print(str(phase))
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        #if debugging:
        #    show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if not shouldBeReinforced and tickClock.getTime() <= 0:
                shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["parameter"]))
                tickClock.reset()

            if joy_x == -1:
                print('left')
                key_resp_ct.keys = "left"
                responseMade = True
                resp_made()
            elif joy_x == 1:
                print('right')
                key_resp_ct.keys = "right"
                responseMade = True
                resp_made()


        #### END EACH FRAME SNIPPET ####
  Routine choice_test
    PolygonComponent circle_resp_choice
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      lineWidth = 2
      nVertices = 3
      opacity [set every frame] = 0
      pos = (0.85, 0.85)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    KeyboardComponent key_resp_4
      allowedKeys = 'up', 'down', 'left', 'right', 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      store = nothing
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    ImageComponent stim_choice1
      image [set every repeat] = $stimulus_choice1
      pos [set every repeat] = $position1
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    ImageComponent stim_choice_2
      image [set every repeat] = $stimulus_choice2
      pos [set every repeat] = $position2
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        #### BEGIN ROUTINE SNIPPET FOR CHOICE TEST ####
        #phase = "choice"

        shouldBeReinforced = 0 # just in case not running the training stage for debugging purposes
        tickClock = core.CountdownTimer(1) # same reason as line above

        if expInfo['session'] == 1: # set rep of choice trial to zero if in first session (no devaluation yet)
            trials_2.nReps = 0

        shouldBeReinforced_1, shouldBeReinforced_2 = 0, 0 # set rnf flag for two options

        tickClock1, tickClock2 = core.CountdownTimer(1), core.CountdownTimer(1) # this is to tick every second for reward availability

        nResp1_this_trial, nResp2_this_trial = 0, 0 # to track responses in this trial;


        #### END BEGIN ROUTINE SNIPPET FOR CHOICE TEST ####
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        #if debugging:
        #    show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if not shouldBeReinforced and tickClock.getTime() <= 0:
                shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["parameter"]))
                tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_4.keys = "up"
                #key_resp_4.rt = str(globalClock.getTime())
                resp_made()
            elif joy_y == 1:
                key_resp_4.keys = "down"
                #key_resp_4.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == -1:
                key_resp_4.keys = "left"
                #key_resp_4.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == 1:
                key_resp_4.keys = "right"
                #key_resp_4.rt = str(globalClock.getTime())
                resp_made()


        #### END EACH FRAME SNIPPET ####
      End Routine:
        #### BEGIN END ROUTINE SNIPPET FOR trials_2 routine ####

        # add one response at the end of the routine if none has been performed

        if nResp1_this_trial == 0:
            trials.addData("key_resp_4.keys", corrResp1)
            trials.addData("key_resp_4.rt", 999999)
            thisExp.addData("trial", trial)
        elif nResp2_this_trial == 0:
            trials.addData("key_resp_4.keys", corrResp2)
            trials.addData("key_resp_4.rt", 999999)
            thisExp.addData("trial", trial)
        elif nResp1_this_trial and nResp2_this_trial == 0:
            trials.addData("key_resp_4.keys", corrResp1)
            trials.addData("key_resp_4.rt", 999999)
            trials.addData("key_resp_4.keys", corrResp2)
            trials.addData("key_resp_4.rt", 999999)
            thisExp.addData("trial", trial)
            #trials.addData("wasRnf", "NA")

        # add current time as key.resp_4.rt to bin choice in R
        #trials.addData("key_resp_4.keys", "NA")
        #trials.addData("key_resp_4.rt", str(globalClock.getTime()))
        #trials.addData("wasRnf", "NA")

        trial += 1

        #### FINISH END ROUTINE SNIPPET FOR trials_2 routine ####
    ImageComponent curtain_img
      image = stim/curtain.jpg
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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  Routine instructions_contingency
    TextComponent text_instructions_contingency
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Good job. Now you will see two short trials and we will ask you to try to win the coin that is presented on the screen. You need to perform the same action that gave you each coin during the experiment.

        This time we will not show you the cube associated with the coin, but nothing apart from that has changed.

        The presentation of each coin will last for 10 sec.









        (Press the space bar to continue)
    KeyboardComponent key_resp_37
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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    KeyboardComponent key_resp_38
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_test_2
    TextComponent instr_test_txt_2
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        One of the piggy banks is now full.

        Please call the experimenter.
    KeyboardComponent key_resp_instr1_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine contingency_test1
    ImageComponent coin_contingency_test
      image [set every repeat] = $coin_img
      opacity [set every frame] = 1
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_ct1
      allowedKeys = 'left', 'right'
      correctAns = $corrResp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
      storeCorrect = True
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        nResp = 0
      Each Frame:
        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if not shouldBeReinforced and tickClock.getTime() <= 0:
                shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["parameter"]))
                tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_ct1.keys = "up"
                #key_resp_4.rt = str(globalClock.getTime())
                #resp_made()
            elif joy_y == 1:
                key_resp_ct1.keys = "down"
                #key_resp_4.rt = str(globalClock.getTime())
                #resp_made()
            elif joy_x == -1:
                print('left')
                key_resp_ct1.keys = "left"
                nResp += 1
                print("nResp: %i") %nResp
                #key_resp_4.rt = str(globalClock.getTime())
                #resp_made()
            elif joy_x == 1:
                print('right')
                key_resp_ct1.keys = "right"
                nResp += 1
                print("nResp: %i") %nResp
                #key_resp_4.rt = str(globalClock.getTime())
                #resp_made()

        if nResp == 1:
            print("nResp >0 is true!")
            # save resp time in csv
            trials_2.addData("key_resp_ct1.keys", key_resp_ct1.keys)
            trials_2.addData("key_resp_ct1.rt", str(globalClock.getTime()))
            trials_2.addData("key_resp_ct1.rt2", str(t))
            thisExp.addData("trial", trial)
            thisExp.nextEntry() # it does not call giveRnf(), so needs to go to next line in csv here

            continueRoutine = False # response has been made. Finish trial.
    TextComponent text_2
      color = black
      font = Comic Sans
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = Perform the action that gave you this coin during training. The coin will be added to your credits.
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  Routine instr_before_consumption_test
    TextComponent instr_devaluation_txt_3
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Free Coin Collection!

        Now you will have the chance to collect 10 coins by clicking on them with the mouse. You will have 15 seconds to collect them.

        We will deposit the coins you collect in their respective piggy banks, if they are not already full.

        Grab the mouse and get ready!


        (Press the space bar to continue)
    KeyboardComponent key_resp_15
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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    KeyboardComponent key_resp_31
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine working_memory
    TextComponent digit1_txt
      color = black
      letterHeight = 0.1
      pos = (-0.9, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit1
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    TextComponent digit2_txt
      color = black
      letterHeight = 0.1
      pos = (-0.7, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit2
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    TextComponent digit3_txt
      color = black
      letterHeight = 0.1
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit3
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    TextComponent digit4_txt
      color = black
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit4
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    TextComponent digit5_txt
      color = black
      letterHeight = 0.1
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit5
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    TextComponent digit6_txt
      color = black
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit6
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    TextComponent digit7_txt
      color = black
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit7
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    TextComponent digit8_txt
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit8
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    TextComponent digit9_txt
      color = black
      letterHeight = 0.1
      pos = (0.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit9
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    TextComponent digit10_txt
      color = black
      letterHeight = 0.1
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $digit10
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  Routine instr1_1
    TextComponent instr1_1_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        During each trial, you will be allowed to perform one of two actions with the joystick: move left or move right.

        During each trial, you will know which action is the correct one by a figure that will appear on the screen.

        Each correct action has a cost of 1 credit.

        The following screens will present the figures and the correct action you need to make when you see each one of these figures.









        (Press the space bar to continue)
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
      syncScreenRefresh = False
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    KeyboardComponent key_resp_23
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank_screen1
    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine instr_reacquisition
    TextComponent instr_test_txt_3
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        In this part of the experiment, you will be presented again with one figure during each trial and you will be able to perform only the action that goes with that single stimulus, just as in the first part of the experiment.

        Apart from that, nothing about the game has changed. You will still receive the coins you win and they will still be deposited in their respective piggy banks, provided they are not full.










        (Press any key to continue)
    KeyboardComponent b_key_resp_instr1_3_
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      store = nothing
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    KeyboardComponent key_resp_36
      allowedKeys = 'a'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      store = nothing
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  Routine instr1
    TextComponent instr_test_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0
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      text:
        Welcome. In this experiment you will have the chance to earn extra money.

        Using the joystick, you will take actions to win coins which will earn you credits. These credits will be cashed out for real money at the end of the experiment.

        Therefore, the more coins you collect, the more cash we will pay you when you are finished.

        These coins can be silver or gold and are worth 40 credits, regardless of color.










        (Press the space bar to continue)
    KeyboardComponent key_resp_instr1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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    KeyboardComponent key_resp_22
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
    TextComponent instr2_txt
      color = black
      font = Comic Sans
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_instr2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instr2_img1
      image [set every repeat] = $instr_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine piggy_bank_partially_full
    TextComponent piggy_bank_text
      color = black
      font = Comic Sans
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $piggy_message
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    TextComponent press_to_continue_txt
      color = black
      font = Comic Sans
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        (Press the space bar to continue)
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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    KeyboardComponent key_resp_30
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISI_1
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine instr_stim4
    TextComponent instr_stim4_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Here is another one of the figures you will see.

        This cube has a purple cube on the right side, so the correct response is to push the cube inwards by moving the joystick to the left, as shown in the picture to the right of the cube.

        Feel free to try it!








        (Press space bar to continue)
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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    ImageComponent resp_left_image
      image = stim/left_resp_img.png
      pos = (-0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent joy_left_img
      image = stim/joy_img_left.jpg
      pos = (0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_25
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2_3
    TextComponent instr2_3_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Every time you perform the action that corresponds to the figure shown on the screen, a triangle will appear at the top-right of the screen signalling that the response has been made.






        IMPORTANT: One of the actions (for ex., right) will give you gold coins when you are rewarded; the other action (for ex., left) will give you silver coins when you are rewarded. This will remain the same throughout the whole experiment.









        (Press space bar to continue)
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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    ImageComponent trian_img
      image = stim/triangle_img.png
      pos = (0, 0.25)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent coin1_img
      image = stim/silver_coin.png
      pos = (-0.2, -0.4)
      size = (0.28, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent coin2_img
      image = stim/gold_coin.png
      pos = (0.2, -0.4)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_26
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2_2
  Routine instr_stim1
    TextComponent instr_stim1_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Below is one of the figures you will see.

        This figure is a cube that has a purple cube on the left side, so the correct response is to push the cube inwards by moving the joystick to the right, as shown in the picture to the right of the cube.

        Feel free to try it!










        (Press the space bar to continue)
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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    ImageComponent resp_right_img
      image = stim/right_resp_img.png
      pos = (-0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent joy_right_img
      image = stim/joy_img_right.jpg
      pos = (0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_24
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_stim3
    TextComponent instr_stim3_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        Here is another one of the figures you will see.

        This cube has a button on the front, so the correct response is to push the button by pushing the joystick away from you, as shown in the picture to the right of the cube. Feel free to try it!












        (Press any key to continue)
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      store = nothing
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    ImageComponent resp_up_img
      image = stim/up_resp_img.png
      pos = (-0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent joy_up_img
      image = stim/joy_img_up.jpg
      pos = (0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine instr_stim2
    TextComponent instr_stim2_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        Here is another one of the figures you will see.

        This cube has a purple cube on the top, so the correct response is to push the cube by pulling the joystick towards you, as shown in the picture to the right of the cube.

        Feel free to try it!









        (Press any key to continue)
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      store = nothing
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    ImageComponent resp_down_img
      image = stim/down_resp_img.png
      pos = (-0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent joy_down_img
      image = stim/joy_img_down.jpg
      pos = (0.2, -0.2)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine response_working_memory
    KeyboardComponent key_resp_wm
      allowedKeys = '1','2','3','4','5','6','7','8','9','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        resp1 = NA
        resp2 = NA
        resp3 = NA
        resp4 = NA
        resp5 = NA
        resp6 = NA
        resp7 = NA
        resp8 = NA
        resp9 = NA
        resp10 = NA
      Each Frame:
        if key_resp_wm.keys[-1] == digit1:
            pass
  Routine consumption_test1
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      timeRelativeTo = experiment
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    ImageComponent gold1
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (0.1, -0.9)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent gold2
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (0.8, 0.8)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent gold3
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent gold4
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (-0.8, 0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent gold5
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (-0.1, -0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent gold6
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (-0.9, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent gold7
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (0, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent gold8
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (0.4, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent gold9
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (-0.85, -0.8)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent gold10
      image = stim/gold_coin.png
      opacity [set every frame] = 1
      pos = (-0.9, 0.9)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver1
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (-0.5, 0.2)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver2
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (0.2, 0.28)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver3
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (0.4, -0.2)
      size = (0.22,0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver4
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (-0.2, -0.6)
      size = (0.22,0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver5
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (0.6, 0.9)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver6
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (-0.1, 0.9)
      size = (0.22,0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver7
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (0.28, 0.9)
      size = (0.22,0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver8
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (-0.4, -0.4)
      size = (0.22,0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver9
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (0.6, -0.3)
      size = (0.22,0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent silver10
      image = stim/silver_coin.png
      opacity [set every frame] = 1
      pos = (-0.25, 0.45)
      size = (0.22,0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        # initialise whether coins have been collected or not

        # initialise "collected" flag for gold coins
        gold1_collected = 0
        gold2_collected = 0
        gold3_collected = 0
        gold4_collected = 0
        gold5_collected = 0
        gold6_collected = 0
        gold7_collected = 0
        gold8_collected = 0
        gold9_collected = 0
        gold10_collected = 0

        # initialise "collected" flag for silver coins
        silver1_collected = 0
        silver2_collected = 0
        silver3_collected = 0
        silver4_collected = 0
        silver5_collected = 0
        silver6_collected = 0
        silver7_collected = 0
        silver8_collected = 0
        silver9_collected = 0
        silver10_collected = 0

        # initialise number of collected coins of each type
        nGold, nSilver = 0, 0
      Each Frame:
        # if mouse is pressed in one coin, make it disappear and increase nGold or nSilver

        # gold

        if not gold1_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold1):
                gold1_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold1_collected:
            gold1.setOpacity(0) # hide the stim

        if not gold2_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold2):
                gold2_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold2_collected:
            gold2.setOpacity(0) # hide the stim

        if not gold3_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold3):
                gold3_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold3_collected:
            gold3.setOpacity(0) # hide the stim

        if not gold4_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold4):
                gold4_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold4_collected:
            gold4.setOpacity(0) # hide the stim

        if not gold5_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold5):
                gold5_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold5_collected:
            gold5.setOpacity(0) # hide the stim

        if not gold6_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold6):
                gold6_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold6_collected:
            gold6.setOpacity(0) # hide the stim

        if not gold7_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold7):
                gold7_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold7_collected:
            gold7.setOpacity(0) # hide the stim

        if not gold8_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold8):
                gold8_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold8_collected:
            gold8.setOpacity(0) # hide the stim

        if not gold9_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold9):
                gold9_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold9_collected:
            gold9.setOpacity(0) # hide the stim

        if not gold10_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(gold10):
                gold10_collected = 1
                nGold += 1 # increase number of coins collected for this type of coin
        elif gold10_collected:
            gold10.setOpacity(0) # hide the stim

        # silver coins

        if not silver1_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver1):
                silver1_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver1_collected:
            silver1.setOpacity(0) # hide the stim

        if not silver2_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver2):
                silver2_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver2_collected:
            silver2.setOpacity(0) # hide the stim

        if not silver3_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver3):
                silver3_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver3_collected:
            silver3.setOpacity(0) # hide the stim

        if not silver4_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver4):
                silver4_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver4_collected:
            silver4.setOpacity(0) # hide the stim

        if not silver5_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver5):
                silver5_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver5_collected:
            silver5.setOpacity(0) # hide the stim

        if not silver6_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver6):
                silver6_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver6_collected:
            silver6.setOpacity(0) # hide the stim

        if not silver7_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver7):
                silver7_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver7_collected:
            silver7.setOpacity(0) # hide the stim

        if not silver8_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver8):
                silver8_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver8_collected:
            silver8.setOpacity(0) # hide the stim

        if not silver9_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver9):
                silver9_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver9_collected:
            silver9.setOpacity(0) # hide the stim

        if not silver10_collected: # while coin has not yet been clicked on
            if mouse.isPressedIn(silver10):
                silver10_collected = 1
                nSilver += 1 # increase number of coins collected for this type of coin
        elif silver10_collected:
            silver10.setOpacity(0) # hide the stim

        if nGold+nSilver == 10:
            continueRoutine = False
      End Routine:
        thisExp.addData('nGold', nGold)
        thisExp.addData('nSilver', nSilver)
        thisExp.nextEntry()
  Routine shouldRun_2
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        # This snippet checks whether session number is 1 or 2
        # If it is 1, it does not present the devaluation phase
        # (the devaluation is done only at the end of the 2nd session)

        if expInfo['session'] == '2':
            print("session 2")
            nRepsChoice = 1
        elif expInfo['session'] == '1':
            nRepsChoice = 0
            print("session 1")
        else:
            print("something diff from 1 or 2 for session number; weird!")
  Routine piggy_bank_full
    TextComponent instr_devaluation_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        The following piggy bank:






        is now FULL.




        (Press any key to continue)
    TextComponent devalued_piggy_bank_txt
      color = black
      font = Comic Sans
      letterHeight = 0.25
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $devalued_coin
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 3
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    KeyboardComponent key_resp_33
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine piggy_bank_msg2
  Routine instr_2_3_1
    TextComponent instr_2_3_1_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        The coins you win will be deposited in two different piggy banks, one for the silver coins and one for the gold coins, provided they are not full.














        Remember: both gold and silver coins are worth 40 credits.



        (Press the space bar to continue)
    KeyboardComponent key_resp_18
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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    KeyboardComponent key_resp_27
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent piggy_bank1_img
      image = stim\silver_piggy_bank.png
      pos = (-0.2, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent piggy_bank2_img
      image = stim\gold_piggy_bank.png
      pos = (0.2, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine reacquisition_test
    KeyboardComponent key_resp_reacq
      allowedKeys = 'down','up','left','right','escape'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      store = nothing
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    PolygonComponent polygon
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      lineWidth = 2
      opacity [set every frame] = 0
      pos = (0, 0.85)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    ImageComponent stim_reacq
      image [set every repeat] = $stimulus
      pos [set every repeat] = $position
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    CodeComponent code_reacq
      Code Type = Py
      Begin Routine:
        #### BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####

        # Initialise parameters at the beginning of each block (routine)
        #phase = "training"

        shouldBeReinforced = 0 # flag to set next reinforcer for RI schedule

        tickClock = core.CountdownTimer(1) # this is to tick every second for reward availability in the RI schedule

        #print(expInfo['session'])

        trials_this_rep = 0

        nResp_this_trial = 0 # to track responses in this trial;

        #### FINISH BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        if debugging:
            show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if expInfo['schedule'] == 'RI':
                if not shouldBeReinforced and tickClock.getTime() <= 0:
                    shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["parameter"]))
                    tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_2.keys = "up"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            elif joy_y == 1:
                key_resp_2.keys = "down"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == -1:
                key_resp_2.keys = "left"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == 1:
                key_resp_2.keys = "right"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()

        #### END EACH FRAME SNIPPET ####
      End Routine:
        #### END ROUTINE SNIPPET FOR TRAINING ROUTINE ####

        if nResp_this_trial == 0:
            trials.addData("key_resp_2.keys", corrResp)
            trials.addData("key_resp_2.rt", "NA")
            thisExp.addData("trial", trial)
            trials.addData("wasRnf", "NA")

        trial += 1 # this is total trials
        trials_this_rep += 1 # this counts trials within the repetition

        #### FINISH END ROUTINE SNIPPET FOR TRAINING ROUTINE ####
    ImageComponent coin_reacq
      image [set every repeat] = $coin_img
      opacity [set every frame] = 0.15
      pos [set every repeat] = $position
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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  Routine choice
    PolygonComponent circle_resp_2
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      lineWidth = 2
      nVertices = 90
      opacity [set every frame] = 0
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent stim_2
      image [set every repeat] = $machine
      pos = (0, -0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    TextComponent credits_txt_2
      color = black
      letterHeight = 0.1
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = credits: 
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    TextComponent number_of_credits_txt_2
      color = red
      letterHeight = 0.12
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every frame] = $credits
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'left'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      store = first key
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    CodeComponent code_2
      Code Type = Py
    ImageComponent coin_2
      image [set every repeat] = $coin_img
      opacity [set every frame] = 0
      pos = (0, 0.6)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine b'shouldRun_3'
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        # This snippet checks whether the repetition from the outer loop is the last one or not
        # If it is 1 (the last one), it does not present the consumption test

        if trials_3.thisRepN == 0:
            print("thisRepN: 0")
            nRepsConsumptionTest = 1
        elif trials_3.thisRepN > 0:
            nRepsConsumptionTest = 0
            print("last repeat; don't present consumption test")
  Routine instr_choice_test
    TextComponent instr_devaluation_txt_2
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Now you will have the opportunity to perform both actions, so you can collect both silver and gold coins.

        The allowed actions will be again signalled by their respective figures.











        (Press the space bar to continue)
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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    ImageComponent resp1_img_example
      image = stim/left_resp_img.png
      pos = (-0.2, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent resp2_img_example
      image = stim/right_resp_img.png
      pos = (0.2, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_34
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine contingency_awareness_test
    TextComponent agreement_txt
      color = black
      font = Comic Sans
      letterHeight = 0.05
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Please rate how much you agree with the following statements. Make your selection by clicking on the rating scale with the mouse, confirm pressing ENTER or clicking on the number that will appear below. 
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    TextComponent contingency_awareness_txt
      color = blue
      font = Comic Sans
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    RatingScaleComponent rating_awareness
      forceEndRoutine = True
      high = 10
      labels = not agree at all, completely agree
      low = 1
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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  Routine training_2
    KeyboardComponent key_resp_21
      allowedKeys = 'up', 'down', 'left', 'right', 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      store = nothing
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    PolygonComponent circle_resp_3
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      lineWidth = 2
      nVertices = 3
      opacity [set every frame] = 0
      pos = (0.85, 0.85)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    ImageComponent stim_3
      image [set every repeat] = $stimulus
      opacity = 0
      pos [set every repeat] = $position
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        #### BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####

        # THIS IS THE CONTINGENCY TEST, CAN BE ALSO USED FOR REACQUISITION

        # Initialise parameters at the beginning of each block (routine)

        expInfo["parameter"] = 1000 # longest ratio or interval ever so that it looks like extinction

        shouldBeReinforced = 0 # flag to set next reinforcer for RI schedule

        tickClock = core.CountdownTimer(1) # this is to tick every second for reward availability in the RI schedule

        #print(expInfo['session'])

        trials_this_rep = 0

        nResp_this_trial = 0 # to track responses in this trial;

        #### FINISH BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        if debugging:
            show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if expInfo['schedule'] == 'RI':
                if not shouldBeReinforced and tickClock.getTime() <= 0:
                    shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["parameter"]))
                    tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_21.keys = "up"
                key_resp_21.rt = str(globalClock.getTime())
                resp_made()
            elif joy_y == 1:
                key_resp_21.keys = "down"
                key_resp_21.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == -1:
                key_resp_21.keys = "left"
                key_resp_21.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == 1:
                key_resp_21.keys = "right"
                key_resp_21.rt = str(globalClock.getTime())
                resp_made()

        #### END EACH FRAME SNIPPET ####
      End Routine:
        #### END ROUTINE SNIPPET FOR TRAINING ROUTINE ####

        if nResp_this_trial == 0:
            trials.addData("key_resp_21.keys", corrResp)
            trials.addData("key_resp_21.rt", "NA")
            thisExp.addData("trial", trial)
            trials.addData("wasRnf", "NA")

        trial += 1 # this is total trials
        trials_this_rep += 1 # this counts trials within the repetition

        #### FINISH END ROUTINE SNIPPET FOR TRAINING ROUTINE ####
    ImageComponent coin_3
      image [set every repeat] = $coin_img
      opacity [set every frame] = 0.15
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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  Routine instr_2_5
    TextComponent instr_2_5_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        In summary:

        1) Only one action is allowed during each trial, depending on the figure that is shown.

        2) You can perform the actions any time and as many times as you want.

        3) One of these actions will sometimes give you gold coins, the other action will sometimes give you silver coins.

        4) Each time you are rewarded with a coin, the coin is desposited in the respective piggy bank and 40 credits will be added to your earnings. Each time you perform an action, 1 credit will be substracted from your total earnings.

        5) The coins you win will be deposited in two piggy banks, one for silver and one for gold coins, provided they are not full.

        6) The experiment is designed so you cannot lose money.



        (Please call the experimenter to continue)
    KeyboardComponent key_resp_19
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    KeyboardComponent key_resp_29
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_2_4
    TextComponent instr_2_4_txt
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Given the nature of the task, not every correct joystick action you make during each trial will give you a coin. It is your task to discover the best way of performing the actions to earn to as many credits as possible during the experiment.

        The best way of performing the joystick actions will be the same for both actions, since they only differ in whether they give you silver or gold coins (worth 40 credits each).









        (Press the space bar to continue)
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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    KeyboardComponent key_resp_28
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine training
    KeyboardComponent key_resp_2
      allowedKeys = 'up', 'down', 'left', 'right', 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      store = nothing
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    PolygonComponent circle_resp
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      lineWidth = 2
      nVertices = 3
      opacity [set every frame] = 0
      pos = (0.85, 0.85)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    ImageComponent stim
      image [set every repeat] = $stimulus
      pos [set every repeat] = $position
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        #### BEGIN EXPERIMENT SNIPPET ####

        # Import joystick libraries
        from psychopy.hardware import joystick
        from psychopy import visual

        joystick.backend='pyglet'  # must match the Window created

        nJoys = joystick.getNumJoysticks()  # to check if we have any joysticks connected
        id = 0
        joy = joystick.Joystick(id)  # id must be <= nJoys - 1

        # Load sounds
        coin_sound = sound.Sound('sounds/coin.wav')
        reward_sound = sound.Sound('sounds/reward2.wav')

        # Create a csv file to save response times etc. Previous one is the native Psychopy file.
        #file_name = 'data/S%s_session%s_%s' %(expInfo['participant'], expInfo['session'], expInfo['date'])
        #csv_file = open(file_name+'.csv', 'wb')
        #writer_object = csv.writer(csv_file, delimiter=",") # create object to write in

        #writer_object.writerow(['resp', 't', 'participant', 'trial', 'session', 'phase'])

        # Initialise some variables

        # Should we show the debugging msgs on screen?
        # In the present experiment, this means showing the credits on the screen
        debugging = False

        nResp_this_trial = 0 # to track responses in each trial;
        nResp1_this_trial, nResp2_this_trial = 0, 0
        nResp_since_last_rnf = 0 # to track responses since last rnf and truncate distribution in case too many responses have been performed without a rnf being delivered

        # Initialise credits
        credits = 0.0

        nReinforcers, nResp, trial = 0, 0, 0

        # create array to save last two frames for joystick position
        joy_posx_array, joy_posy_array = [], []
        window = 2 # maximum length of array (2 if you want the joy pos for 2 frames, for ex)

        # Create some text box objects for debugging purposes; if debug == True these will show up
        num_credits_txt = visual.TextBox(window=win, text=' ', font_size=50,
                                 font_color=[-1, -1, 1], size=(1.9, .3), pos=(0.7, -0.95),
                                 grid_horz_justification='center', units='norm')

        joy_pos_array_txt = visual.TextBox(window=win, text='', font_size=20,
                                 font_color=[1, 1, 1], size=(1.9, .3), pos=(-0.7, 0.5),
                                 grid_horz_justification='center', units='norm')

        credits_title_txt = visual.TextBox(window=win, text='Credits', font_size=80,
                                 font_color=[1,1,1], size=(1.9, .3), pos=(0.7, -0.8),
                                 grid_horz_justification='center', units='norm')

        def show_debugging_stuff():
            ''' set text for stims to show every frame '''
            #shouldBeReinforced_txt.setText('Reinforce?: %d' %shouldBeReinforced)
            #joy_pos_array_txt.setText("joy_resp_array: \n" + str(joy_pos_array))
            num_credits_txt.setText(str(credits))
            # Draw stim on screen
            #shouldBeReinforced_txt.draw()
            #joy_pos_array_txt.draw()
            credits_title_txt.draw()
            num_credits_txt.draw()

        def checkRnf():
            ''' Once a response has been recorded -resp_made()-,
            this function checks whether it is reinforced
            and gives the reward if shouldBeReinforced flag is True
            After recording in a csv, goes to the next line '''
            global credits, shouldBeReinforced, nReinforcers, nResp_since_last_rnf # globals because these are used outside

            if expInfo['schedule'] == 'RR':
                shouldBeReinforced = np.random.binomial(1, 1/float(expInfo['parameter']))
                if nResp_since_last_rnf > 2*int(expInfo['parameter']): # if 2 times the scheduled parameter ellapse, reinforce next response
                    shouldBeReinforced = 1

            if shouldBeReinforced:
                nResp_since_last_rnf = 0 # reset after each reinforcer is delivered
                nReinforcers += 1
                credits += float(expInfo['credits_per_rnf'])
                reward_sound.play()
                for frameN in range(30): # show for bit more than half a sec (60 frames = 1 sec)
                    #reward_txt.draw()
                    if phase == "training":
                        circle_resp.setOpacity(1)
                        coin.setOpacity(1)
                    else: # reacquisition phase
                        circle_resp_3.setOpacity(1)
                        coin_3.setOpacity(1)
                    win.flip()
            else:
                coin_sound.play()

            # add data to csv file for training response (wasRnf is called; it's not called for choice test so these are saved in resp_made())
            trials.addData("wasRnf", shouldBeReinforced)
            trials.addData("trial", trial)
            thisExp.nextEntry() # now go to next line; not used during choice because giveRnf() is not called upon

            shouldBeReinforced = 0 # reset shouldBeReinforced flag

        def resp_made():
            global credits, nResp, nResp_this_trial, nResp1_this_trial, nResp2_this_trial, nResp_since_last_rnf # credits var updates troughout the experiment
            ''' after a resp is made, save it in the csv file and show circle '''

            if phase == "training":
                if key_resp_2.keys in ["left", "right"]: # this updates the 2-element array with joy_x pos
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_x)
                elif key_resp_2.keys in ["up", "down"]: # this updates the 2-element array with joy_y pos
                    joy_posy_array.pop(0)
                    joy_posy_array.append(joy_y)

                if key_resp_2.keys in [corrResp]:
                    #save resp time in csv
                    trials.addData("key_resp_2.keys", key_resp_2.keys)
                    trials.addData("key_resp_2.rt", str(globalClock.getTime()))
                    trials.addData("key_resp_2.rt2", str(t))
                    thisExp.addData("trial", trial)
                    nResp += 1
                    nResp_this_trial += 1
                    nResp_since_last_rnf += 1
                    credits -= float(expInfo['cost_response'])
                    #coin_sound.play()
                    #print("correct resp")
                    for nframes in range(5):
                        circle_resp.setOpacity(1) # this is actually a triangle; changed it for newer versions
                        win.flip()
                    checkRnf() # call checkRnf function to see whether it's reinforced

            elif phase == "choice":
                if key_resp_4.keys in ["left", "right"]: # this updates the 2-element array with joy_x pos
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_x)
                elif key_resp_4.keys in ["up", "down"]: # this updates the 2-element array with joy_y pos
                    #joy_posy_array.pop(0)
                    joy_posy_array.pop(0)
                    joy_posy_array.append(joy_y)

                if key_resp_4.keys in [corrResp1, corrResp2]:
                    if key_resp_4.keys == corrResp1:
                        nResp1_this_trial += 1
                    elif key_resp_4.keys == corrResp2:
                        nResp2_this_trial += 1
                    # save resp time in csv
                    trials_2.addData("key_resp_4.keys", key_resp_4.keys)
                    trials_2.addData("key_resp_4.rt", str(globalClock.getTime()))
                    trials_2.addData("key_resp_4.rt2", str(t))
                    thisExp.addData("trial", trial)
                    thisExp.nextEntry() # it does not call giveRnf(), so needs to go to next line in csv here
                    #coin_sound.play() # no sound for choice stage
                    for nframes in range(5):
                        circle_resp_choice.setOpacity(1) # opacity 0 if you don't want to show the triangle during the choice test
                        win.flip()
            elif phase == "reacquisition":
                if key_resp_21.keys in ["left", "right"]: # this updates the 2-element array with joy_x pos
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_x)
                elif key_resp_21.keys in ["up", "down"]: # this updates the 2-element array with joy_y pos
                    joy_posy_array.pop(0)
                    joy_posy_array.append(joy_y)

                if key_resp_21.keys in [corrResp]:
                    #save resp time in csv
                    trials.addData("key_resp_21.keys", key_resp_21.keys)
                    trials.addData("key_resp_21.rt", str(globalClock.getTime()))
                    trials.addData("key_resp_21.rt2", str(t))
                    thisExp.addData("trial", trial)
                    nResp += 1
                    nResp_this_trial += 1
                    credits -= float(expInfo['cost_response'])
                    coin_sound.play()
                    #print("correct resp")
                    for nframes in range(5):
                        circle_resp_3.setOpacity(1) # this is actually a triangle; changed it for newer versions
                        win.flip()
                    checkRnf() # call checkRnf function to see whether it's reinforced
            elif phase == "contingency_test":
                print(3)
                if key_resp_ct1.keys in [corrResp1, corrResp2]:
                    print("key_resp_ct1.keys: %s") %key_resp_ct1.keys
                    nResp += 1
                    print("Nresp: %i") %nResp
                    # save resp time in csv
                    trials_2.addData("key_resp_ct1.keys", key_resp_ct1.keys)
                    trials_2.addData("key_resp_ct1.rt", str(globalClock.getTime()))
                    trials_2.addData("key_resp_ct1.rt2", str(t))
                    thisExp.addData("trial", trial)
                    thisExp.nextEntry() # it does not call giveRnf(), so needs to go to next line in csv here
                if nResp > 0:
                    print("nResp >0 is true!")
                    continueRoutine = False
                    #coin_sound.play() # no sound for the contingency test stage
                    #for nframes in range(3):
                        #circle_resp_choice.setOpacity(1)

        #### END BEGIN EXPERIMENT SNIPPET ####
      Begin Routine:
        #### BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####

        # Initialise parameters at the beginning of each block (routine)
        #phase = "training"

        shouldBeReinforced = 0 # flag to set next reinforcer for RI schedule

        tickClock = core.CountdownTimer(1) # this is to tick every second for reward availability in the RI schedule

        #print(expInfo['session'])

        trials_this_rep, nResp_this_trial, nResp_since_last_rnf = 0, 0, 0


        #### FINISH BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        if debugging:
            show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if expInfo['schedule'] == 'RI':
                if not shouldBeReinforced and tickClock.getTime() <= 0:
                    shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["parameter"]))
                    tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_2.keys = "up"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            elif joy_y == 1:
                key_resp_2.keys = "down"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == -1:
                key_resp_2.keys = "left"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()
            elif joy_x == 1:
                key_resp_2.keys = "right"
                key_resp_2.rt = str(globalClock.getTime())
                resp_made()

        #### END EACH FRAME SNIPPET ####
      End Routine:
        #### END ROUTINE SNIPPET FOR TRAINING ROUTINE ####

        if nResp_this_trial == 0:
            trials.addData("key_resp_2.keys", corrResp)
            trials.addData("key_resp_2.rt", 999)
            thisExp.addData("trial", trial)
            trials.addData("wasRnf", 0)

        trial += 1 # this is total trials
        trials_this_rep += 1 # this counts trials within the repetition

        #### FINISH END ROUTINE SNIPPET FOR TRAINING ROUTINE ####
    ImageComponent coin
      image [set every repeat] = $coin_img
      opacity [set every frame] = 0.2
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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  Routine instr_2_6
    TextComponent text_4
      color = black
      font = comic sans
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
                               Good luck!
  Routine instr_after_consumption_test
    TextComponent time_is_up_txt
      color = black
      font = Comic Sans
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        OK, we will deposit these coins into their respective piggy banks.

        Now press the space bar to continue.
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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    KeyboardComponent key_resp_32
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine shouldRun
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if trials_3.thisRepN == 0:
            print("first rep; run the consump test")
            nRepsConsumptionTest = 1
        elif trials_3.thisRepN == 1:
            print("Last rep; don't run the consump test")
            nRepsConsumptionTest = 1
            nRepsConsumptionTest = 0
  Routine S_R_test
    ImageComponent stim_S_R_test_img
      image [set every repeat] = $stimulus
      pos [set every repeat] = $position
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_ct2
      allowedKeys = 'left','right'
      correctAns = $corrResp
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        nResp = 0
      Each Frame:
        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if not shouldBeReinforced and tickClock.getTime() <= 0:
                shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["parameter"]))
                tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_ct2.keys = "up"
                #key_resp_4.rt = str(globalClock.getTime())
                #resp_made()
            elif joy_y == 1:
                key_resp_ct2.keys = "down"
                #key_resp_4.rt = str(globalClock.getTime())
                #resp_made()
            elif joy_x == -1:
                print('left')
                key_resp_ct2.keys = "left"
                nResp += 1
                print("nResp: %i") %nResp
                #key_resp_4.rt = str(globalClock.getTime())
                #resp_made()
            elif joy_x == 1:
                print('right')
                key_resp_ct2.keys = "right"
                nResp += 1
                print("nResp: %i") %nResp
                #key_resp_4.rt = str(globalClock.getTime())
                #resp_made()

        if nResp == 1:
            print("nResp >0 is true!")
            # save resp time in csv
            trials_2.addData("key_resp_ct2.keys", key_resp_ct2.keys)
            trials_2.addData("key_resp_ct2.rt", str(globalClock.getTime()))
            trials_2.addData("key_resp_ct2.rt2", str(t))
            thisExp.addData("trial", trial)
            thisExp.nextEntry() # it does not call giveRnf(), so needs to go to next line in csv here

            continueRoutine = False # response has been made. Finish trial.
    TextComponent text_3
      color = black
      font = comic sans
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = Perform the correct action for this figure. The respective coin will be added to your credits.
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  Routine shouldRun4
    CodeComponent code_9
      Code Type = Py
      Begin Experiment:
        # should run contingency awareness questions?

        if expInfo['session'] == '2':
            print("session 2")
            nRepsContingencyAwareness = 1
        elif expInfo['session'] == '1':
            nRepsContingencyAwareness = 0
            print("session 1")
        else:
            print("something diff from 1 or 2 for session number; weird!")
  Routine goodbye
    TextComponent final_txt_1
      color = black
      font = Comic Sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        End of the experiment. Thanks for participating!

        Please call the experimenter.
    TextComponent credits_txt
      color = yellow
      font = Comic Sans
      letterHeight = 0.25
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = str($(credits/100)) + ' dollars'
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    KeyboardComponent key_resp_12
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code_8
      Code Type = Py
      End Experiment:
        payout_this_session = (nReinforcers*float(expInfo['credits_per_rnf']) - nResp*float(expInfo['cost_response']))/100.0

        print("credits: %.2f")%credits
  Routine instr_2_3_0
    TextComponent text_5
      color = black
      font = comic sans
      letterHeight = 0.06
      pos = (0, 0.08)
      startVal [time (s)] = 0.0
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      text:
        During each trial, the coin (either silver or gold) will light up in the center of the screen every time you are rewarded.
    ImageComponent light_up_coins_img
      image = stim/coins_light_up_instructions.png
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_40
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
      syncScreenRefresh = False
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    KeyboardComponent key_resp_41
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_choice_test_2
    TextComponent text
      color = black
      font = Comic sans
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        This time the coins you win will be covered by a curtain, but the actions will still give you the same type of coin as before.

        Apart from that, nothing about the game has changed, and you should continue playing as before.


        Ready?





        (Press the space bar to continue)
    KeyboardComponent key_resp_20
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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    KeyboardComponent key_resp_35
      allowedKeys = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr1
  Routine instr1_1
  Routine instr_stim1
  Routine instr_stim2
  Routine instr_stim3
  Routine instr_stim4
  Routine instr2_3
  Routine instr_2_3_0
  Routine instr_2_3_1
  Routine instr_2_4
  Routine instr_2_5
  Routine instr_2_6
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = $'conditions_piggy_bank_'+expInfo['session']+'.xlsx'
    isTrials = False
    loopType = sequential
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 0:2
      conditionsFile = conditions_habits2_v8.xlsx
      loopType = sequential
      nReps = 2
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      Routine training
    LoopTerminator trials
    Routine shouldRun
    LoopInitiator trials_consumption_test loopType="TrialHandler"
      conditions = [OrderedDict([('nRepsConsumptionTest', 1)])]
      conditionsFile = runConsumptionTest.xlsx
      isTrials = False
      loopType = random
      nReps = $nRepsConsumptionTest
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      Routine piggy_bank_partially_full
      Routine instr_before_consumption_test
      Routine consumption_test1
      Routine instr_after_consumption_test
    LoopTerminator trials_consumption_test
  LoopTerminator trials_3
  Routine shouldRun_2
  LoopInitiator choice_block loopType="TrialHandler"
    conditionsFile = runBlock.xlsx
    loopType = random
    nReps = $nRepsChoice
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    Routine piggy_bank_full
    Routine instr_before_consumption_test
    Routine consumption_test1
    Routine instr_after_consumption_test
    Routine instr_choice_test
    Routine instr_choice_test_2
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = 15:16
      conditionsFile = conditions_habits2_v8.xlsx
      loopType = sequential
      nReps = 1
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      Routine choice_test
    LoopTerminator trials_2
  LoopTerminator choice_block
  Routine ISI_1
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = 12:14
    conditionsFile = conditions_habits2_v8.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_num_python', 0), ('condition', 'over1'), ('stimulus', 'stim/right_resp_img.png'), ('position', [-0.5, 0]), ('corrResp', 'right'), ('coin_img', 'stim/silver_coin.png'), ('duration', 2), ('aux1', 'r'), ('rand_num', 0.5358804167215786), ('devalued_coin', 'gold'), ('stimulus_choice1', None), ('stimulus_choice2', None), ('condition_choice', None), ('position1', None), ('position2', None), ('phase', 'training'), ('corrResp1', None), ('corrResp2', None), ('outcome', 'silver'), ('cond_val', 'val'), ('outcome_choice1', None), ('outcome_choice2', None), ('cond_val1', None), ('cond_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,
      OrderedDict([('trial_num_python', 1), ('condition', 'over2'), ('stimulus', 'stim/left_resp_img.png'), ('position', [0.5, 0]), ('corrResp', 'left'), ('coin_img', 'stim/gold_coin.png'), ('duration', 2), ('aux1', 'l'), ('rand_num', 0.9303277163346302), ('devalued_coin', 'gold'), ('stimulus_choice1', None), ('stimulus_choice2', None), ('condition_choice', None), ('position1', None), ('position2', None), ('phase', 'training'), ('corrResp1', None), ('corrResp2', None), ('outcome', 'gold'), ('cond_val', 'deval'), ('outcome_choice1', None), ('outcome_choice2', None), ('cond_val1', None), ('cond_val2',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,
      OrderedDict([('trial_num_python', 2), ('condition', 'under1'), ('stimulus', 'stim/up_resp_img.png'), ('position', [0, -0.5]), ('corrResp', 'up'), ('coin_img', 'stim/silver_coin.png'), ('duration', 2), ('aux1', 'u'), ('rand_num', 0.06754788612212426), ('devalued_coin', 'gold'), ('stimulus_choice1', None), ('stimulus_choice2', None), ('condition_choice', None), ('position1', None), ('position2', None), ('phase', 'training'), ('corrResp1', None), ('corrResp2', None), ('outcome', 'silver'), ('cond_val', 'val'), ('outcome_choice1', None), ('outcome_choice2', None), ('cond_val1', None), ('cond_val2'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,
      OrderedDict([('trial_num_python', 3), ('condition', 'under2'), ('stimulus', 'stim/down_resp_img.png'), ('position', [0, 0.5]), ('corrResp', 'down'), ('coin_img', 'stim/gold_coin.png'), ('duration', 2), ('aux1', 'd'), ('rand_num', 0.8646540326431261), ('devalued_coin', 'gold'), ('stimulus_choice1', None), ('stimulus_choice2', None), ('condition_choice', None), ('position1', None), ('position2', None), ('phase', 'training'), ('corrResp1', None), ('corrResp2', None), ('outcome', 'gold'), ('cond_val', 'deval'), ('outcome_choice1', None), ('outcome_choice2', None), ('cond_val1', None), ('cond_val2'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
    Routine contingency_test1
    Routine blank_screen1
  LoopTerminator trials_4
  LoopInitiator trials_S_R_test loopType="TrialHandler"
    Selected rows = 12:14
    conditionsFile = conditions_habits2_v8.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_num_python', 0), ('condition', 'over1'), ('stimulus', 'stim/right_resp_img.png'), ('position', [-0.5, 0]), ('corrResp', 'right'), ('coin_img', 'stim/silver_coin.png'), ('duration', 1), ('aux1', 'r'), ('rand_num', 0.17430525473256286), ('devalued_coin', 'gold'), ('stimulus_choice1', None), ('stimulus_choice2', None), ('condition_choice', None), ('position1', None), ('position2', None), ('phase', 'training'), ('corrResp1', None), ('corrResp2', None), ('outcome', 'silver'), ('cond_val', 'val'), ('outcome_choice1', None), ('outcome_choice2', None), ('cond_val1', None), ('cond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,
      OrderedDict([('trial_num_python', 1), ('condition', 'over2'), ('stimulus', 'stim/left_resp_img.png'), ('position', [0.5, 0]), ('corrResp', 'left'), ('coin_img', 'stim/gold_coin.png'), ('duration', 1), ('aux1', 'l'), ('rand_num', 0.8324649639657031), ('devalued_coin', 'gold'), ('stimulus_choice1', None), ('stimulus_choice2', None), ('condition_choice', None), ('position1', None), ('position2', None), ('phase', 'training'), ('corrResp1', None), ('corrResp2', None), ('outcome', 'gold'), ('cond_val', 'deval'), ('outcome_choice1', None), ('outcome_choice2', None), ('cond_val1', None), ('cond_val2',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,
      OrderedDict([('trial_num_python', 2), ('condition', 'under1'), ('stimulus', 'stim/up_resp_img.png'), ('position', [0, -0.5]), ('corrResp', 'up'), ('coin_img', 'stim/silver_coin.png'), ('duration', 1), ('aux1', 'u'), ('rand_num', 0.386623300481872), ('devalued_coin', 'gold'), ('stimulus_choice1', None), ('stimulus_choice2', None), ('condition_choice', None), ('position1', None), ('position2', None), ('phase', 'training'), ('corrResp1', None), ('corrResp2', None), ('outcome', 'silver'), ('cond_val', 'val'), ('outcome_choice1', None), ('outcome_choice2', None), ('cond_val1', None), ('cond_val2', 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,
      OrderedDict([('trial_num_python', 3), ('condition', 'under2'), ('stimulus', 'stim/down_resp_img.png'), ('position', [0, 0.5]), ('corrResp', 'down'), ('coin_img', 'stim/gold_coin.png'), ('duration', 1), ('aux1', 'd'), ('rand_num', 0.9851042697059614), ('devalued_coin', 'gold'), ('stimulus_choice1', None), ('stimulus_choice2', None), ('condition_choice', None), ('position1', None), ('position2', None), ('phase', 'training'), ('corrResp1', None), ('corrResp2', None), ('outcome', 'gold'), ('cond_val', 'deval'), ('outcome_choice1', None), ('outcome_choice2', None), ('cond_val1', None), ('cond_val2'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
    Routine S_R_test
    Routine blank_screen1
  LoopTerminator trials_S_R_test
  Routine shouldRun4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = conditions_awareness.xlsx
    loopType = random
    nReps = $nRepsContingencyAwareness
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    conditions:
      [OrderedDict([('question', 'The more I responded with the correct action, the more coins I won, and viceversa')]),
      OrderedDict([('question', 'I won more when I left a long gap between each actions')]),
      OrderedDict([('question', 'I won more when I left a short gap between actions')]),
      OrderedDict([('question', 'The least I responded with the correct action, the more coins I won, and viceversa')])]
    Routine contingency_awareness_test
  LoopTerminator trials_5
  LoopInitiator working_mem_task loopType="TrialHandler"
    conditionsFile = conditions_working_memory.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('digit1', 2), ('digit2', 4), ('digit3', 5), ('digit4', 7), ('digit5', 9), ('digit6', 0), ('digit7', 8), ('digit8', 3), ('digit9', 1), ('digit10', 6), ('duration1', 1), ('duration2', 1), ('duration3', 0), ('duration4', 0), ('duration5', 0), ('duration6', 0), ('duration7', 0), ('duration8', 0), ('duration9', 0), ('duration10', 0), ('t01', 0), ('t02', 1), ('t03', 0), ('t04', 0), ('t05', 0), ('t06', 0), ('t07', 0), ('t08', 0), ('t09', 0), ('t10', 0)]),
      OrderedDict([('digit1', 2), ('digit2', 4), ('digit3', 5), ('digit4', 7), ('digit5', 9), ('digit6', 0), ('digit7', 8), ('digit8', 3), ('digit9', 1), ('digit10', 6), ('duration1', 1), ('duration2', 1), ('duration3', 1), ('duration4', 0), ('duration5', 0), ('duration6', 0), ('duration7', 0), ('duration8', 0), ('duration9', 0), ('duration10', 0), ('t01', 0), ('t02', 1), ('t03', 2), ('t04', 0), ('t05', 0), ('t06', 0), ('t07', 0), ('t08', 0), ('t09', 0), ('t10', 0)]),
      OrderedDict([('digit1', 2), ('digit2', 4), ('digit3', 5), ('digit4', 7), ('digit5', 9), ('digit6', 0), ('digit7', 8), ('digit8', 3), ('digit9', 1), ('digit10', 6), ('duration1', 1), ('duration2', 1), ('duration3', 1), ('duration4', 1), ('duration5', 0), ('duration6', 0), ('duration7', 0), ('duration8', 0), ('duration9', 0), ('duration10', 0), ('t01', 0), ('t02', 1), ('t03', 2), ('t04', 3), ('t05', 0), ('t06', 0), ('t07', 0), ('t08', 0), ('t09', 0), ('t10', 0)]),
      OrderedDict([('digit1', 2), ('digit2', 4), ('digit3', 5), ('digit4', 7), ('digit5', 9), ('digit6', 0), ('digit7', 8), ('digit8', 3), ('digit9', 1), ('digit10', 6), ('duration1', 1), ('duration2', 1), ('duration3', 1), ('duration4', 1), ('duration5', 1), ('duration6', 0), ('duration7', 0), ('duration8', 0), ('duration9', 0), ('duration10', 0), ('t01', 0), ('t02', 1), ('t03', 2), ('t04', 3), ('t05', 4), ('t06', 0), ('t07', 0), ('t08', 0), ('t09', 0), ('t10', 0)])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
    Routine working_memory
    Routine response_working_memory
  LoopTerminator working_mem_task
  Routine goodbye
