PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u'00', u'schedule': u'RI', u'interval': u'15', u'session': u'1', u'experimenter': u'o', u'devalued': u'gold'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  Save csv file = True
  expName = habits_2
  Screen = 1
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Routines
  Routine shouldRun_2
    CodeComponent code_5
      Begin Routine:
        # This snippet checks whether session number is 1 or 2
        # If it is 1, it does not present the devaluation phase
        # (the devaluation is done at the end of the 2nd day)

        if expInfo['session'] == '2':
            print("session 2")
            nRepsChoice = 1
        elif expInfo['session'] == '1':
            nRepsChoice = 0
            print("session 1")
        else:
            print("something diff from 1 or 2 for session number; weird!")
  Routine instr_2_4
    TextComponent instr_2_4_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Given the nature of the task, not every correct joystick action you make during each trial will be rewarded.

        In fact, there is a best way to perform the correct joystick action in order to win the most rewards with the least cost. But you need to discover this yourself!










        Please call the experimenter now
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine training
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = $duration
      forceEndRoutine = True
      allowedKeys = 'up', 'down', 'left', 'right', 'escape'
      startVal [time (s)] = 0.0
      store = all keys
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    PolygonComponent circle_resp
      opacity [set every frame] = 0
      fillColor = $[1.000,0.004,-1.000]
      stopVal [duration (s)] = $duration
      lineWidth = 2
      lineColor = $[1.000,0.004,-1.000]
      startVal [time (s)] = 0.0
      nVertices = 3
      size = (0.2, 0.2)
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    ImageComponent stim
      stopVal [duration (s)] = $duration
      pos [set every repeat] = $position
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus
      size = (0.3, 0.3)
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    ImageComponent stim_pressed
      opacity [set every frame] = 0
      stopVal [duration (s)] = $duration
      pos [set every repeat] = $position
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus_pressed
      size = (0.3, 0.3)
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    CodeComponent code
      Begin Experiment:
        #### BEGIN EXPERIMENT SNIPPET ####

        # Import joystick libraries
        from psychopy.hardware import joystick
        from psychopy import visual

        joystick.backend='pyglet'  # must match the Window created

        nJoys = joystick.getNumJoysticks()  # to check if we have any joysticks connected
        id = 0
        joy = joystick.Joystick(id)  # id must be <= nJoys - 1

        # Load sounds
        coin_sound = sound.Sound('sounds/coin.wav')
        reward_sound = sound.Sound('sounds/reward2.wav')

        # Initialise some variables

        # Should we show the debugging msgs on screen?
        debugging = True

        # Initialise credits
        credits = 0

        nReinforcers = 0

        # create array to save last two frames for joystick position
        joy_posx_array, joy_posy_array = [], []
        window = 2 # maximum length of array (2 if you want 2 frames, for ex)

        # Create some text box objects for debugging purposes
        num_credits_txt = visual.TextBox(window=win, text=' ', font_size=50,
                                 font_color=[-1, -1, 1], size=(1.9, .3), pos=(0.7, -0.95),
                                 grid_horz_justification='center', units='norm')

        joy_pos_array_txt = visual.TextBox(window=win, text='', font_size=20,
                                 font_color=[1, 1, 1], size=(1.9, .3), pos=(-0.7, 0.5),
                                 grid_horz_justification='center', units='norm')

        credits_title_txt = visual.TextBox(window=win, text='Credits', font_size=80,
                                 font_color=[1,1,1], size=(1.9, .3), pos=(0.7, -0.8),
                                 grid_horz_justification='center', units='norm')

        def show_debugging_stuff():
            ''' set text for stims to show every frame '''
            #shouldBeReinforced_txt.setText('Reinforce?: %d' %shouldBeReinforced)
            #joy_pos_array_txt.setText("joy_resp_array: \n" + str(joy_pos_array))
            num_credits_txt.setText(str(credits))
            # Draw stim on screen
            #shouldBeReinforced_txt.draw()
            #joy_pos_array_txt.draw()
            credits_title_txt.draw()
            num_credits_txt.draw()

        def checkRnf():
            ''' Once a response has been recorded,
            this function checks whether a response is reinforced
            and gives the reward if shouldBeReinforced flag is True '''
            global credits, shouldBeReinforced, nReinforcers # globals because these are used outside

            if shouldBeReinforced:
                nReinforcers += 1
                credits += 25
                reward_sound.play()
                for frameN in range(50): # show for half a sec
                    #reward_txt.draw()
                    circle_resp.setOpacity(0)
                    coin.setOpacity(1)
                    win.flip()
            trials.addData("wasRnf", shouldBeReinforced)
            thisExp.nextEntry()

            shouldBeReinforced = 0 # reset shouldBeReinforced flag

        def resp_made():
            global credits
            ''' after a resp is made, save it in the csv file and show circle '''
            if phase == "training":
                if key_resp_2.keys in ["left", "right"]: # this updates the 2-element array with joy_x pos
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_x)
                    # save data in csv
                    trials.addData("response", key_resp_2.keys)
                    trials.addData("t", str(globalClock.getTime()))

                elif key_resp_2.keys in ["up", "down"]: # this updates the 2-element array with joy_y pos
                    joy_posx_array.pop(0)
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_y)
                    trials.addData("response", key_resp_2.keys)
                    trials.addData("t", str(globalClock.getTime()))

            elif phase == "choice":
                if key_resp_4.keys in ["left", "right"]: # this updates the 2-element array with joy_x pos
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_x)
                    # save data in csv
                    trials.addData("response", key_resp_4.keys)
                    trials.addData("t", str(globalClock.getTime()))

                elif key_resp_4.keys in ["up", "down"]: # this updates the 2-element array with joy_y pos
                    joy_posx_array.pop(0)
                    joy_posx_array.pop(0)
                    joy_posx_array.append(joy_y)
                    trials.addData("response", key_resp_4.keys)
                    trials.addData("t", str(globalClock.getTime()))
                thisExp.nextEntry()


            if phase == "training":
                if key_resp_2.keys in [corrResp]:
                    credits -= 1
                    coin_sound.play()
                    #print("correct resp")
                    for nframes in range(3):
                        circle_resp.setOpacity(1)
                        #stim_pressed.setOpacity(1)
                    checkRnf() # call checkRnf function to see whether it's reinforced
            elif phase == "choice":
                if key_resp_4.keys in [corrResp1, corrResp2]:
                    #credits -= 1
                    coin_sound.play()
                    #print("correct resp")
                    for nframes in range(3):
                        circle_resp_choice.setOpacity(1)
                        #stim_pressed.setOpacity(1)
                    #checkRnf()

        #### END BEGIN EXPERIMENT SNIPPET ####
      Begin Routine:
        #### BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####

        # Initialise parameters at the beginning of each block (routine)
        phase = "training"

        shouldBeReinforced = 0 # flag to set next reinforcer for RI schedule

        tickClock = core.CountdownTimer(1) # this is to tick every second for reward availability

        #print(expInfo['session'])

        #### FINISH BEGIN ROUTINE SNIPPET FOR TRAINING ROUTINE ####
      End Routine:
        #### END ROUTINE SNIPPET FOR TRAINING ROUTINE ####



        #### FINISH END ROUTINE SNIPPET FOR TRAINING ROUTINE ####
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        if debugging:
            show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if not shouldBeReinforced and tickClock.getTime() <= 0:
                shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["interval"]))
                tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_2.keys = "up"
                resp_made()
            elif joy_y == 1:
                key_resp_2.keys = "down"
                resp_made()
            elif joy_x == -1:
                key_resp_2.keys = "left"
                resp_made()
            elif joy_x == 1:
                key_resp_2.keys = "right"
                resp_made()


        #### END EACH FRAME SNIPPET ####
    ImageComponent coin
      opacity [set every frame] = 0
      stopVal [duration (s)] = $duration
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      image [set every repeat] = $coin_img
      size = (0.2, 0.2)
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  Routine choice_test
    PolygonComponent circle_resp_choice
      opacity [set every frame] = 0
      fillColor = $[1.000,0.004,-1.000]
      stopVal [duration (s)] = $duration
      lineWidth = 2
      lineColor = $[1.000,0.004,-1.000]
      startVal [time (s)] = 0.0
      nVertices = 3
      size = (0.2, 0.2)
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    KeyboardComponent key_resp_4
      stopVal [duration (s)] = $duration
      forceEndRoutine = True
      allowedKeys = 'up', 'down', 'left', 'right', 'escape'
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent stim_choice1
      stopVal [duration (s)] = $duration
      pos [set every repeat] = $position1
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus_choice1
      size = (0.3, 0.3)
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    ImageComponent stim_choice_2
      stopVal [duration (s)] = $duration
      pos [set every repeat] = $position2
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimulus_choice2
      size = (0.3, 0.3)
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    CodeComponent code_3
      Begin Routine:
        #### BEGIN ROUTINE SNIPPET FOR CHOICE TEST ####
        phase = "choice"

        if expInfo['session'] == 1:
            trials_2.nReps = 0

        shouldBeReinforced_1, shouldBeReinforced_2 = 0, 0 # set rnf flag for two options

        tickClock1, tickClock2 = core.CountdownTimer(1), core.CountdownTimer(1) # this is to tick every second for reward availability

        #### END BEGIN ROUTINE SNIPPET FOR CHOICE TEST ####
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        #if debugging:
        #    show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        joy_posx_array.append(joy_x)
        joy_posy_array.append(joy_y)

        if len(joy_posx_array) > 2:
            joy_posx_array.pop(0)

        if len(joy_posy_array) > 2:
            joy_posy_array.pop(0)

        # check whether reward is available to collect
        # this runs only if a response is not currently being made
        # this avoids rewarding maintaining the joystick in a position

        if joy_posx_array not in [[1, 1], [-1,-1]] and joy_posy_array not in [[1, 1], [-1,-1]]: # pos_array not in [["left","left"], ["right","right"], ["up", "up"],["down","down"]]:

            if not shouldBeReinforced and tickClock.getTime() <= 0:
                shouldBeReinforced = np.random.binomial(1, 1/int(expInfo["interval"]))
                tickClock.reset()

            # assign key_resp to "up", "down", etc.
            if joy_y == -1:
                key_resp_4.keys = "up"
                resp_made()
            elif joy_y == 1:
                key_resp_4.keys = "down"
                resp_made()
            elif joy_x == -1:
                key_resp_4.keys = "left"
                resp_made()
            elif joy_x == 1:
                key_resp_4.keys = "right"
                resp_made()


        #### END EACH FRAME SNIPPET ####
    ImageComponent curtain_img
      stopVal [duration (s)] = $duration
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      image = stim/curtain.jpg
      size = (0.2, 0.2)
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  Routine goodbye
    TextComponent final_txt_1
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        End of the experiment. Thanks for participating!

        Your total earning for today was
    TextComponent credits_txt
      color = yellow
      text [set every repeat] = str($(credits/10)) + ' dollars'
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.25
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instr_stim4
    TextComponent instr_stim4_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Here is another one of the stimuli you will see.

        This cube has a button on the right side, so the correct response is to push the button by moving the joystick to the left, as shown in the picture to the right of the cube. Feel free to try it!










        (Press any key to continue)
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent resp_left_image
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/left_resp_img.png
      size = (0.35, 0.35)
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    ImageComponent joy_left_img
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/joy_img_left.jpg
      size = (0.35, 0.35)
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  Routine instr1_1
    TextComponent instr1_1_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        During each trial, you will be allowed to perform one of four actions with the joystick: move left, move right, push and pull. Each allowed movement comes at a cost of 0.01 dollars.

        You will know which action is the correct one by a stimulus that will appear on the screen. An incorrect action will have no effect.

        The following screens will present the stimuli and the correct action you need to take when you see each stimulus.









        (Press any key to continue)
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine shouldRun
    CodeComponent code_4
      Begin Routine:
        if expInfo['session']==1:
            n
  Routine instr_test_2
    TextComponent instr_test_txt_2
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        One of the piggy banks is now full.

        Please call the experimenter.
    KeyboardComponent key_resp_instr1_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_test
    TextComponent instr_devaluation_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        One of the piggy banks is now full.

        Please call the experimenter.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
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  Routine instr1
    TextComponent instr_test_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        In this experiment, you will be using your joystick to earn either gold or silver coins which correspond to credits that can be cashed in for real money at the end of the experiment.

        Each coin is worth exactly the same dollar amount of 0.25 dollars. Each of the coins you earn during the experiment will be deposited into one of two piggy banks: one for gold coins and the other for silver coins.

        Silver and gold coins are worth the same.











        (Press any key to continue)
    KeyboardComponent key_resp_instr1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
    TextComponent instr2_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.1
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    KeyboardComponent key_resp_instr2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instr2_img1
      startVal [time (s)] = 0.0
      image [set every repeat] = $instr_img
      size = (0.5, 0.5)
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  Routine instr2_2
  Routine instr_stim1
    TextComponent instr_stim1_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Below is one of the stimuli you will see.

        This stimuli is a cube that has a button on the left side, so the correct response is to push the button by moving the joystick to the right, as shown in the picture to the right of the cube.

        Feel free to try it!










        (Press any key to continue)
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent resp_right_img
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/right_resp_img.png
      size = (0.35, 0.35)
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    ImageComponent joy_right_img
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/joy_img_right.jpg
      size = (0.35, 0.35)
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  Routine instr_stim3
    TextComponent instr_stim3_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Here is another one of the stimuli you will see.

        This cube has a button on the front, so the correct response is to push the button by pushing the joystick away from you, as shown in the picture to the right of the cube. Feel free to try it!












        (Press any key to continue)
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent resp_up_img
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/up_resp_img.png
      size = (0.35, 0.35)
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    ImageComponent joy_up_img
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/joy_img_up.jpg
      size = (0.35, 0.35)
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  Routine instr_stim2
    TextComponent instr_stim2_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Here is another one of the stimuli you will see.

        This cube has a button on the top, so the correct response is to push the button by pulling the joystick towards you, as shown in the picture to the right of the cube. Feel free to try it!










        (Press any key to continue)
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent resp_down_img
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/down_resp_img.png
      size = (0.35, 0.35)
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    ImageComponent joy_down_img
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      image = stim/joy_img_down.jpg
      size = (0.35, 0.35)
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  Routine choice
    PolygonComponent circle_resp_2
      opacity [set every frame] = 0
      fillColor = $[1.000,0.004,-1.000]
      stopVal [duration (s)] = 0
      lineWidth = 2
      lineColor = $[1.000,0.004,-1.000]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.2, 0.2)
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    ImageComponent stim_2
      stopVal [duration (s)] = 0
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      image [set every repeat] = $machine
      size = (0.5, 0.5)
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    TextComponent credits_txt_2
      color = black
      text = credits: 
      stopVal [duration (s)] = 0
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent number_of_credits_txt_2
      color = red
      text [set every frame] = $credits
      stopVal [duration (s)] = 0
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    KeyboardComponent key_resp_3
      correctAns = $corrAns
      stopVal [duration (s)] = 0
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'left'
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_2
    ImageComponent coin_2
      opacity [set every frame] = 0
      stopVal [duration (s)] = 0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      image [set every repeat] = $coin_img
      size = (0.25, 0.25)
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  Routine instr2_3
    TextComponent instr2_3_txt
      color = black
      startVal [time (s)] = 0.0
      font = Comic Sans
      letterHeight = 0.06
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      text:
        Every time you perform the action that corresponds to the stimulus shown on the screen, a triangle will appear at the center of the screen signalling that the relevant response has been made.

        You may receive a reward for performing the action which corresponds to the stimulus shown on the screen. This will be in the form of either a gold or silver coin, which will appear at the top of the screen when the reward is earned. Your credits will increase proportionally, and the coin will be added to your respective piggy bank.

        Two of the actions will give you gold coins when you are rewarded; the other two will give you silver coins. Remember: both gold and silver coins are worth the same in terms of dollars.









        (Press any key to continue)
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr1
  Routine instr1_1
  Routine instr_stim1
  Routine instr_stim2
  Routine instr_stim3
  Routine instr_stim4
  Routine instr2_3
  Routine instr_2_4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
    Selected rows = 0:10
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    conditions:
      [{'corrResp': u'left', 'corrResp1': None, 'corrResp2': None, 'stimulus': u'stim/left_resp_img.png', 'stimulus_pressed_choice1': None, 'condition_choice': None, 'position1': None, 'coin_img1': None, 'coin_img2': None, 'coin_img': u'stim/silver_coin.jpg', 'position2': None, 'aux1': u'l', 'phase': u'training', 'duration': 3, 'position': [0.5, 0], 'stimulus_pressed_choice2': None, 'stimulus_pressed': u'stim/left_resp_img_pressed.png', 'stimulus_choice2': None, 'condition': u'under1', 'stimulus_choice1': None},
      {'corrResp': u'right', 'corrResp1': None, 'corrResp2': None, 'stimulus': u'stim/right_resp_img.png', 'stimulus_pressed_choice1': None, 'condition_choice': None, 'position1': None, 'coin_img1': None, 'coin_img2': None, 'coin_img': u'stim/gold_coin.jpg', 'position2': None, 'aux1': u'r', 'phase': u'training', 'duration': 3, 'position': [-0.5, 0], 'stimulus_pressed_choice2': None, 'stimulus_pressed': u'stim/right_resp_img_pressed.png', 'stimulus_choice2': None, 'condition': u'over1', 'stimulus_choice1': None},
      {'corrResp': u'down', 'corrResp1': None, 'corrResp2': None, 'stimulus': u'stim/down_resp_img.png', 'stimulus_pressed_choice1': None, 'condition_choice': None, 'position1': None, 'coin_img1': None, 'coin_img2': None, 'coin_img': u'stim/gold_coin.jpg', 'position2': None, 'aux1': u'd', 'phase': u'training', 'duration': 3, 'position': [0, 0.5], 'stimulus_pressed_choice2': None, 'stimulus_pressed': u'stim/down_resp_img_pressed.png', 'stimulus_choice2': None, 'condition': u'under2', 'stimulus_choice1': None},
      {'corrResp': u'up', 'corrResp1': None, 'corrResp2': None, 'stimulus': u'stim/up_resp_img.png', 'stimulus_pressed_choice1': None, 'condition_choice': None, 'position1': None, 'coin_img1': None, 'coin_img2': None, 'coin_img': u'stim/silver_coin.jpg', 'position2': None, 'aux1': u'u', 'phase': u'training', 'duration': 3, 'position': [0, -0.5], 'stimulus_pressed_choice2': None, 'stimulus_pressed': u'stim/up_resp_img_pressed.png', 'stimulus_choice2': None, 'condition': u'over2', 'stimulus_choice1': None}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
    Routine training
  LoopTerminator trials
  Routine shouldRun_2
  LoopInitiator choice_block loopType="TrialHandler"
    conditionsFile = runBlock.xlsx
    loopType = random
    nReps = $nRepsChoice
    conditions = [{'nRepsChoice': 1}]
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    Routine instr_test
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 3
      Selected rows = 10:12
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      conditions:
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      Routine choice_test
    LoopTerminator trials_2
  LoopTerminator choice_block
  Routine goodbye
