PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'2', u'interval': u'5'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [800, 600]
  Full-screen window = False
  expName = joystick_test
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      color = black
      text [set every frame] = 0
      pos = (0, .2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        from psychopy.hardware import joystick
        from psychopy import visual

        joystick.backend='pyglet'  # must match the Window

        nJoys = joystick.getNumJoysticks()  # to check if we have any
        id = 0
        joy = joystick.Joystick(id)  # id must be <= nJoys - 1

        nAxes = joy.getNumAxes()  # for interest


        # Create some text box objects for debugging purposes
        shouldBeReinforced_txt = visual.TextBox(window=win, text=' ', font_size=20,
                                 font_color=[-1, -1, 1], size=(1.9, .3), pos=(0.0, 0.4),
                                 grid_horz_justification='center', units='norm')

        reward_txt = visual.TextBox(window=win, text=' ', font_size=20,
                                 font_color=[1, -1, 1], size=(2, .4), pos=(0.0, 0.8),
                                 grid_horz_justification='center', units='norm')

        def show_debugging_stuff():
            ''' set text for stims to show every frame '''
            shouldBeReinforced_txt.setText('Reinforce?: \n %s' %str(shouldBeReinforced))
            reward_txt.setText('reward!')# %str(reward))
            #isReinforced_txt.setText('isReinforced: %s' %str(isReinforced))

            # Draw stim on screen
            shouldBeReinforced_txt.draw()

        debugging = True
      Begin Routine:
        # Parameters for the RI
        shouldBeReinforced = 0 # flag to set next reinforcer for RI schedule

        tickClock = core.CountdownTimer(1) # this is to tick every second
      Each Frame:
        #### EACH FRAME SNIPPET ####

        # show debugging stuff?
        if debugging:
            show_debugging_stuff()

        # Get position of x and y in joystick
        joy_x, joy_y = joy.getX(), joy.getY()

        # check whether reward is available to collect
        # this runs only if a response is not being made
        # this avoids rewarding maintaining the joystick in a position
        if joy_x not in [-1, 1] and joy_y not in [-1, 1]:
            if not shouldBeReinforced and tickClock.getTime() <= 0:
                shouldBeReinforced = np.random.binomial(1, 1/int(expInfo['interval']))
                tickClock.reset()

        text.setText("")

        if joy_x == -1:
            text.setText("left resp")
            if shouldBeReinforced:
                reward_txt.draw()
                shouldBeReinforced = 0
        elif joy_x == 1:
            text.setText("right resp")
            if shouldBeReinforced:
                reward_txt.draw()
                shouldBeReinforced = 0
        elif joy_y == -1:
            text.setText("up resp")
            if shouldBeReinforced:
                reward_txt.draw()
                shouldBeReinforced = 0
        elif joy_y == 1:
            text.setText("down resp")
            if shouldBeReinforced:
                reward_txt.draw()
                shouldBeReinforced = 0

        #### END EACH FRAME SNIPPET ####
Flow
  Routine trial
